PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = AudTraining2
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Routines
  Routine codejs
    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
          thisExp=psychoJS.experiment;
          win=psychoJS.window;
          event=psychoJS.eventManager;
          Array.prototype.append = [].push;
          shuffle = util.shuffle;
          random = Math.random;
          randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
          }
          Array.prototype.index = [].indexOf;
          Array.prototype.insert = function ( index, item ) {

            this.splice( index, 0, item );

          };
  Routine code2
    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        import copy as copy
        #def num1_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.220 * n-0.05)
        #    return float(0.220 * n)

        def num1_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.230 * n-0.05)
            return float(0.230 * n)

        #def num3_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.240 * n-0.05)
        #    return float(0.240 * n)

        def num2_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.250 * n-0.05)
            return float(0.250 * n)

        #def num5_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.260 * n-0.05)
        #    return float(0.260 * n)

        def num3_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.270 * n-0.05)
            return float(0.270 * n)

        def shuffle_list(List):
        #    global totalShuffle
        #    totalShuffle += 1
            counta=0
            countb=0
            countc=0
            for ii in List:
                shuffle(ii)
                d = difFinder(ii)
                if(d == 1):
                    counta += 1
                elif(d == 2):
                    countb += 1
                elif(d == 3):
                    countc += 1
            if(counta == countb and counta == countc):
                shuffle(List)
                return List
            else:
                return shuffle_list(List)

        def difFinder(i):
            if i[0] != i[1] and i[0] != i[2]:
                return 1;
            if i[1] != i[0] and i[1] != i[2]:
                return 2;
            if i[2] != i[0] and i[2] != i[1]:
                return 3;

        total=[[[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1]],
        [[3,1,4,2,2,1],[3,1,4,2,2,1],[1,3,4,2,2,1]],
        [[2,1,1,1,3,4,1],[2,1,1,1,3,4,1],[2,1,1,3,1,4,1]],
        [[3,1,1,3,2,2,1],[3,1,1,3,2,2,1],[3,1,3,1,2,2,1]],
        [[2,1,1,4,1,3,1],[2,1,1,4,1,3,1],[2,1,1,4,3,1,1]],
        [[3,1,2,2,1,3,1],[3,1,2,2,1,3,1],[3,1,2,2,3,1,1]],
        [[4,2,2,1,1,2,1],[4,2,2,1,1,2,1],[4,2,2,2,1,1,1]],
        [[1,1,2,3,1,2,2,1],[1,1,2,3,1,2,2,1],[1,1,2,1,3,2,2,1]],
        [[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1]],
        [[1,1,2,2,1,1,4,1],[1,1,2,2,1,1,4,1],[1,1,2,1,1,2,4,1]],
        [[3,1,2,1,1,1,3,1],[3,1,2,1,1,1,3,1],[3,1,2,1,1,3,1,1]],
        [[3,1,2,2,1,1,2,1],[3,1,2,2,1,1,2,1],[1,3,2,2,1,1,2,1]]]


        #total=[#[[2,2,4,1,3,1],[2,2,4,1,3,1],[2,2,4,3,1,1]],
        ##[[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1]],
        ##[[3,1,4,2,2,1],[3,1,4,2,2,1],[1,3,4,2,2,1]],
        #[[4,1,3,3,1,1],[4,1,3,3,1,1],[4,3,1,3,1,1]],
        ##[[4,3,1,1,3,1],[4,3,1,1,3,1],[4,1,3,1,3,1]],
        #[[4,3,1,2,2,1],[4,3,1,2,2,1],[4,1,3,2,2,1]],
        #[[1,1,2,3,1,4,1],[1,1,2,3,1,4,1],[1,1,2,1,3,4,1]],
        ##[[1,1,2,4,2,2,1],[1,1,2,4,2,2,1],[2,1,1,4,2,2,1]],
        ##[[2,1,1,1,3,4,1],[2,1,1,1,3,4,1],[2,1,1,3,1,4,1]],
        ##[[2,2,2,1,1,4,1],[2,2,2,1,1,4,1],[2,2,1,1,2,4,1]],
        #[[2,2,3,1,1,3,1],[2,2,3,1,1,3,1],[2,2,3,1,3,1,1]],
        ##[[3,1,1,3,2,2,1],[3,1,1,3,2,2,1],[3,1,3,1,2,2,1]],
        #[[2,1,1,2,2,4,1],[2,1,1,2,2,4,1],[1,1,2,2,2,4,1]],
        ##[[2,1,1,4,1,3,1],[2,1,1,4,1,3,1],[2,1,1,4,3,1,1]],
        #[[2,2,1,3,3,1,1],[2,2,1,3,3,1,1],[2,2,1,3,1,3,1]],
        ##[[3,1,2,2,1,3,1],[3,1,2,2,1,3,1],[3,1,2,2,3,1,1]],
        #[[4,1,1,2,3,1,1],[4,1,1,2,3,1,1],[4,1,1,2,1,3,1]],
        ##[[4,2,2,1,1,2,1],[4,2,2,1,1,2,1],[4,2,2,2,1,1,1]],
        ##[[1,1,2,3,1,2,2,1],[1,1,2,3,1,2,2,1],[1,1,2,1,3,2,2,1]],
        ##[[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1]],
        #[[2,1,1,3,1,1,3,1],[2,1,1,3,1,1,3,1],[2,1,1,3,1,3,1,1]],
        ##[[3,1,4,1,1,1,1,1],[3,1,4,1,1,1,1,1],[1,3,4,1,1,1,1,1]],
        #[[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1]],
        #[[4,2,2,1,1,1,1,1],[4,2,2,1,1,1,1,1],[4,2,1,1,2,1,1,1]],
        ##[[1,1,1,1,4,3,1,1],[1,1,1,1,4,3,1,1],[1,1,1,1,4,1,3,1]],
        ##[[1,1,2,2,1,1,4,1],[1,1,2,2,1,1,4,1],[1,1,2,1,1,2,4,1]],
        #[[1,1,2,3,1,1,3,1],[1,1,2,3,1,1,3,1],[1,1,2,3,1,3,1,1]],
        #[[2,2,1,1,1,1,4,1],[2,2,1,1,1,1,4,1],[2,1,1,2,1,1,4,1]]]
        ##[[3,1,2,1,1,1,3,1],[3,1,2,1,1,1,3,1],[3,1,2,1,1,3,1,1]],
        ##[[3,1,2,2,1,1,2,1],[3,1,2,2,1,1,2,1],[1,3,2,2,1,1,2,1]]]

        total2=[[[1,1,3.5,4.5,3.5,1],[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1]],
        [[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[3.5,1,1.4,4.5,1.4,1]],
        [[1.4,3.5,1.4,4.5,1,1],[1.4,3.5,1.4,4.5,1,1],[1.4,3.5,1.4,1,4.5,1]],
        [[3.5,3.5,1,4.5,1,1],[3.5,3.5,1,4.5,1,1],[3.5,3.5,4.5,1,1,1]],
        [[4.5,1,1,3.5,3.5,1],[4.5,1,1,3.5,3.5,1],[1,4.5,1,3.5,3.5,1]],
        [[4.5,1,1.4,3.5,1.4,1],[4.5,1,1.4,3.5,1.4,1],[1,4.5,1.4,3.5,1.4,1]],
        [[1,3.5,1.4,3.5,1.4,1,1],[1,3.5,1.4,3.5,1.4,1,1],[1,1.4,3.5,3.5,1.4,1,1]],
        [[1.4,1,4.5,1.4,1.4,1,1],[1.4,1,4.5,1.4,1.4,1,1],[1.4,4.5,1,1.4,1.4,1,1]],
        [[1.4,1,4.5,3.5,1,1,1],[1.4,1,4.5,3.5,1,1,1],[1.4,4.5,1,3.5,1,1,1]],
        [[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,1.4,3.5,1,1,1]],
        [[4.5,1,1.4,1.4,1,1.4,1],[4.5,1,1.4,1.4,1,1.4,1],[1,4.5,1.4,1.4,1,1.4,1]],
        [[4.5,1.4,1,3.5,1,1,1],[4.5,1.4,1,3.5,1,1,1],[4.5,1.4,1,1,3.5,1,1]],
        [[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,3.5,1.4,3.5,1]],
        [[1,1.4,1.4,1,4.5,1.4,1],[1,1.4,1.4,1,4.5,1.4,1],[1,1.4,1.4,4.5,1,1.4,1]],
        [[1,1.4,4.5,1,1,3.5,1],[1,1.4,4.5,1,1,3.5,1],[1,1.4,4.5,1,3.5,1,1]],
        [[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,4.5,1.4,1,1]],
        [[1.4,3.5,1,1,1.4,3.5,1],[1.4,3.5,1,1,1.4,3.5,1],[1.4,3.5,1,1,3.5,1.4,1]],
        [[3.5,1.4,1,4.5,1,1,1],[3.5,1.4,1,4.5,1,1,1],[3.5,1.4,1,1,4.5,1,1]],
        [[1,1,1,1.4,4.5,1,1.4,1],[1,1,1,1.4,4.5,1,1.4,1],[1,1,1,4.5,1.4,1,1.4,1]],
        [[1,1,3.5,1.4,1,3.5,1,1],[1,1,3.5,1.4,1,3.5,1,1],[1,1,3.5,1.4,3.5,1,1,1]],
        [[1,1,3.5,1.4,1.4,1,1.4,1],[1,1,3.5,1.4,1.4,1,1.4,1],[1,1,1.4,3.5,1.4,1,1.4,1]],
        [[1.4,1,4.5,1,1.4,1,1,1],[1.4,1,4.5,1,1.4,1,1,1],[1.4,4.5,1,1,1.4,1,1,1]],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1]],
        [[3.5,1,1,3.5,1,1.4,1,1],[3.5,1,1,3.5,1,1.4,1,1],[3.5,1,1,1,3.5,1.4,1,1]],
        [[1,3.5,1,4.5,1,1,1,1],[1,3.5,1,4.5,1,1,1,1],[3.5,1,1,4.5,1,1,1,1]],
        [[1,4.5,1,1,3.5,1,1,1],[1,4.5,1,1,3.5,1,1,1],[1,4.5,1,1,1,3.5,1,1]],
        [[1.4,1,1.4,3.5,1.4,1,1,1],[1.4,1,1.4,3.5,1.4,1,1,1],[1.4,1,1.4,1.4,3.5,1,1,1]],
        [[3.5,1,1,4.5,1,1,1,1],[3.5,1,1,4.5,1,1,1,1],[3.5,1,1,1,4.5,1,1,1]],
        [[3.5,1.4,1.4,1,1,1,1.4,1],[3.5,1.4,1.4,1,1,1,1.4,1],[1.4,3.5,1.4,1,1,1,1.4,1]],
        [[4.5,1,1,1,1.4,1.4,1,1],[4.5,1,1,1,1.4,1.4,1,1],[1,4.5,1,1,1.4,1.4,1,1]]]

        totalSD=[[[1],[1],[2]],[[1],[1],[3]],
        [[1],[1],[4]],[[1],[1],[1.4]],
        [[1],[1],[3.5]],[[1],[1],[4.5]],
        [[2],[2],[1]],[[2],[2],[3]],
        [[2],[2],[4]],[[2],[2],[1.4]],
        [[2],[2],[3.5]],[[2],[2],[4.5]],
        [[3],[3],[1]],[[3],[3],[2]],
        [[3],[3],[4]],[[3],[3],[1.4]],
        [[3],[3],[3.5]],[[3],[3],[4.5]],
        [[4],[4],[1]],[[4],[4],[2]],
        [[4],[4],[3]],[[4],[4],[1.4]],
        [[4],[4],[3.5]],[[4],[4],[4.5]],
        [[1.4],[1.4],[1]],[[1.4],[1.4],[2]],
        [[1.4],[1.4],[3]],[[1.4],[1.4],[4]],
        [[1.4],[1.4],[3.5]],[[1.4],[1.4],[4.5]],
        [[3.5],[3.5],[1]],[[3.5],[3.5],[2]],
        [[3.5],[3.5],[3]],[[3.5],[3.5],[4]],
        [[3.5],[3.5],[1.4]],[[3.5],[3.5],[4.5]],
        [[4.5],[4.5],[1]],[[4.5],[4.5],[2]],
        [[4.5],[4.5],[3]],[[4.5],[4.5],[4]],
        [[4.5],[4.5],[1.4]],[[4.5],[4.5],[3.5]]]
        a=0
        b=0
        c=0
        a2=0
        b2=0
        c2=0
        a3=0
        b3=0
        c3=0
        aaud=0
        baud=0
        caud=0
        a2aud=0
        b2aud=0
        c2aud=0
        a3aud=0
        b3aud=0
        c3aud=0
        #avolset=0
        #bvolset=0
        #cvolset=0

        list1=shuffle_list(copy.deepcopy(total))
        for i in list1:
          i.append('black')
        ran1 = randint(8,12)
        list1.insert(ran1,[[2,2,4,1,3,1],[2,2,4,1,3,1],[2,2,4,3,1,1],'green'])
        ran1 = randint(18,22)
        list1.insert(ran1,[[4,2,2,1,1,2,1],[4,2,2,1,1,2,1],[4,2,2,2,1,1,1],'green'])

        list2=shuffle_list(copy.deepcopy(total2))
        for i in list2:
          i.append('black')
        ran2 = randint(8,12)
        list2.insert(ran2,[[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,3.5,1.4,3.5,1],[1,1.4,1,1.4,3.5,3.5,1],'green'])
        ran2 = randint(18,22)
        list2.insert(ran2,[[3.5,1.4,1.4,3.5,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],'green'])

        listSD=shuffle_list(copy.deepcopy(totalSD))
        for i in listSD:
          i.append('black')
        ran3 = randint(8,12)
        listSD.insert(ran3,[[4],[4],[3],'green'])
        ran3 = randint(18,22)
        listSD.insert(ran3,[[4.5],[4.5],[2],'green'])
        #list1aud=shuffle_list(copy.deepcopy(total))
        #list2aud=shuffle_list(copy.deepcopy(total2))
        #listSDaud=shuffle_list(copy.deepcopy(totalSD))
        pListVisReg=[[[2,2,4,1,3,1],[2,2,4,3,1,1],[2,2,4,1,3,1],'black'],
        [[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1],'black'],
        [[2,1,1,3,1,1,3,1],[2,1,1,3,1,3,1,1],[2,1,1,3,1,1,3,1],'green'],
        [[1,3,4,2,2,1],[3,1,4,2,2,1],[3,1,4,2,2,1],'black'],
        [[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1],'green'],
        [[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1],'black']]
        #pListVisReg = shuffle_list(copy.deepcopy(total))
        #pListVisIrreg = shuffle_list(copy.deepcopy(total2))
        pListVisIrreg = [[[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1],[1,1,3.5,4.5,3.5,1],'black'],
        [[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,4.5,1.4,1,1],'green'],
        [[3.5,1.4,1.4,1,1,1,1.4,1],[3.5,1.4,1.4,1,1,1,1.4,1],[1.4,3.5,1.4,1,1,1,1.4,1],'black'],
        [[3.5,1,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],'black'],
        [[1,3.5,1.4,3.5,1.4,1,1],[1,1.4,3.5,3.5,1.4,1,1],[1,3.5,1.4,3.5,1.4,1,1],'green'],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1],'black']]
        #pListVisSD = shuffle_list(copy.deepcopy(totalSD))
        pListVisSD = [[[1],[1],[3],'black'],
        [[2],[2],[1],'green'],
        [[3.5],[1.4],[3.5],'black'],
        [[4.5],[4.5],[3],'green'],
        [[2],[3.5],[3.5],'black'],
        [[2],[3.5],[2],'black']]
        #pListAudReg = shuffle_list(copy.deepcopy(total))
        #pListAudIrreg = shuffle_list(copy.deepcopy(total2))
        #pListAudSD = shuffle_list(copy.deepcopy(totalSD))

        intervall=len(list1[a][b])
        intervall2=len(list2[a2][b2])
        #intervallaud=len(list1aud[aaud][baud])
        #intervall2aud=len(list2aud[a2aud][b2aud])
        #intervallvolset=len(total[avolset][bvolset])
        pIntervall = len(total[a][b])

        def positionn(intervall):
            pos5=[(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0)]
            pos6=[(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0),(-5,0)]
            pos7=[(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0)]
            if intervall == 6:
                return pos5
            elif intervall == 7:
                return pos6
            elif intervall == 8:
                return pos7


        def repetitionn(intervall):
            if intervall == 6:
                return 18
            elif intervall == 7:
                return 21
            elif intervall == 8:
                return 24

        def durationn(intervall,isAud=False): #write lists inside of function!
            if(isAud == False):
                start5=[1.5,0,0,0,0,0]
                start6=[1.5,0,0,0,0,0,0]
                start7=[1.5,0,0,0,0,0,0,0]
            else:
                start5=[1.5,0.05,0.05,0.05,0.05,0.05]
                start6=[1.5,0.05,0.05,0.05,0.05,0.05,0.05]
                start7=[1.5,0.05,0.05,0.05,0.05,0.05,0.05,0.05]

            if intervall == 6:
                return start5
            elif intervall == 7:
                return start6
            elif intervall == 8:
                return start7

        ran=randint(1,3)
        def stop(List,a,b,c,isAud,ran):
            if ran==1:
                if(isAud):
                    return num1_to_sec(List[a][b][c],True)
                else:
                    return num1_to_sec(List[a][b][c])
            elif ran==2:
                if(isAud):
                    return num2_to_sec(List[a][b][c],True)
                else:
                    return num2_to_sec(List[a][b][c])
            elif ran==3:
                if(isAud):
                    return num3_to_sec(List[a][b][c],True)
                else:
                    return num3_to_sec(List[a][b][c])
        #    elif ran==4:
        #        if(isAud):
        #            return num4_to_sec(List[a][b][c],True)
        #        else:
        #            return num4_to_sec(List[a][b][c])
        #    elif ran==5:
        #        if(isAud):
        #            return num5_to_sec(List[a][b][c],True)
        #        else:
        #            return num5_to_sec(List[a][b][c])
        #    elif ran==6:
        #        if(isAud):
        #            return num6_to_sec(List[a][b][c],True)
        #        else:
        #            return num6_to_sec(List[a][b][c])

        # this code is related to the fixation cross in the middle of the screen
        cross = visual.ShapeStim(
            win=win, name='cross', vertices='cross',
            size=(0.05, 0.05),
            ori=0, pos=(0, 0),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-1.0, interpolate=True)

        counter=0
        L1=[0,0,0,0,0,0]
        L2=[0,0,0,0,0,0]
        L3=[0,0,0,0,0,0]
        L4=[0,0,0,1,0,0]
        L5=[0,0,0,0,0,0]
        L6=[0,0,0,0,0,0]
        order=[L1,L2,L3,L4,L5,L6]
        #shuffle(order)
      Begin JS Experiment:
        function num1_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.23 * n) - 0.05));
            }
            return Number.parseFloat((0.23 * n));
        }
        function num2_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.25 * n) - 0.05));
            }
            return Number.parseFloat((0.25 * n));
        }
        function num3_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.27 * n) - 0.05));
            }
            return Number.parseFloat((0.27 * n));
        }
        function shuffle_list(List) {
            var counta, countb, countc, d;
            counta = 0;
            countb = 0;
            countc = 0;
            for (var ii, _pj_c = 0, _pj_a = List, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                ii = _pj_a[_pj_c];
                shuffle(ii);
                d = difFinder(ii);
                if ((d === 1)) {
                    counta += 1;
                } else {
                    if ((d === 2)) {
                        countb += 1;
                    } else {
                        if ((d === 3)) {
                            countc += 1;
                        }
                    }
                }
            }
            if (((counta === countb) && (counta === countc))) {
                shuffle(List);
                return List;
            } else {
                return shuffle_list(List);
            }
        }
        difFinder=function(i) {
            function arrays_equal(a, b) { return !!a && !!b && !(a < b || b < a); }
            if (!arrays_equal(i[0], i[1]) && !arrays_equal(i[0], i[2])) {
                return 1;
            }
            if (!arrays_equal(i[0], i[1]) && !arrays_equal(i[1], i[2])) {
                return 2;
            }
            if (!arrays_equal(i[0], i[2]) && !arrays_equal(i[1], i[2])) {
                return 3;
            }
        }
        total = [[[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1]],[[3,1,4,2,2,1],[3,1,4,2,2,1],[1,3,4,2,2,1]],[[2,1,1,1,3,4,1],[2,1,1,1,3,4,1],[2,1,1,3,1,4,1]],[[3,1,1,3,2,2,1],[3,1,1,3,2,2,1],[3,1,3,1,2,2,1]],[[2,1,1,4,1,3,1],[2,1,1,4,1,3,1],[2,1,1,4,3,1,1]],[[3,1,2,2,1,3,1],[3,1,2,2,1,3,1],[3,1,2,2,3,1,1]],[[4,2,2,1,1,2,1],[4,2,2,1,1,2,1],[4,2,2,2,1,1,1]],[[1,1,2,3,1,2,2,1],[1,1,2,3,1,2,2,1],[1,1,2,1,3,2,2,1]],[[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1]],[[1,1,2,2,1,1,4,1],[1,1,2,2,1,1,4,1],[1,1,2,1,1,2,4,1]],[[3,1,2,1,1,1,3,1],[3,1,2,1,1,1,3,1],[3,1,2,1,1,3,1,1]],[[3,1,2,2,1,1,2,1],[3,1,2,2,1,1,2,1],[1,3,2,2,1,1,2,1]]]

        //total = [[[4, 1, 3, 3, 1, 1], [4, 1, 3, 3, 1, 1], [4, 3, 1, 3, 1, 1]], [[4, 3, 1, 2, 2, 1], [4, 3, 1, 2, 2, 1], [4, 1, 3, 2, 2, 1]], [[1, 1, 2, 3, 1, 4, 1], [1, 1, 2, 3, 1, 4, 1], [1, 1, 2, 1, 3, 4, 1]],[[2, 2, 3, 1, 1, 3, 1], [2, 2, 3, 1, 1, 3, 1], [2, 2, 3, 1, 3, 1, 1]],[[2, 1, 1, 2, 2, 4, 1], [2, 1, 1, 2, 2, 4, 1], [1, 1, 2, 2, 2, 4, 1]],[[2, 2, 1, 3, 3, 1, 1], [2, 2, 1, 3, 3, 1, 1], [2, 2, 1, 3, 1, 3, 1]],[[4, 1, 1, 2, 3, 1, 1], [4, 1, 1, 2, 3, 1, 1], [4, 1, 1, 2, 1, 3, 1]],[[2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 3, 1, 1]], [[4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 1, 3, 1]], [[4, 2, 2, 1, 1, 1, 1, 1], [4, 2, 2, 1, 1, 1, 1, 1], [4, 2, 1, 1, 2, 1, 1, 1]],[[1, 1, 2, 3, 1, 1, 3, 1], [1, 1, 2, 3, 1, 1, 3, 1], [1, 1, 2, 3, 1, 3, 1, 1]], [[2, 2, 1, 1, 1, 1, 4, 1], [2, 2, 1, 1, 1, 1, 4, 1], [2, 1, 1, 2, 1, 1, 4, 1]]];
        total2 = [[[1, 1, 3.5, 4.5, 3.5, 1], [1, 1, 3.5, 4.5, 3.5, 1], [1, 3.5, 1, 4.5, 3.5, 1]], [[1, 3.5, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], [3.5, 1, 1.4, 4.5, 1.4, 1]], [[1.4, 3.5, 1.4, 4.5, 1, 1], [1.4, 3.5, 1.4, 4.5, 1, 1], [1.4, 3.5, 1.4, 1, 4.5, 1]], [[3.5, 3.5, 1, 4.5, 1, 1], [3.5, 3.5, 1, 4.5, 1, 1], [3.5, 3.5, 4.5, 1, 1, 1]], [[4.5, 1, 1, 3.5, 3.5, 1], [4.5, 1, 1, 3.5, 3.5, 1], [1, 4.5, 1, 3.5, 3.5, 1]], [[4.5, 1, 1.4, 3.5, 1.4, 1], [4.5, 1, 1.4, 3.5, 1.4, 1], [1, 4.5, 1.4, 3.5, 1.4, 1]], [[1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 1.4, 3.5, 3.5, 1.4, 1, 1]], [[1.4, 1, 4.5, 1.4, 1.4, 1, 1], [1.4, 1, 4.5, 1.4, 1.4, 1, 1], [1.4, 4.5, 1, 1.4, 1.4, 1, 1]], [[1.4, 1, 4.5, 3.5, 1, 1, 1], [1.4, 1, 4.5, 3.5, 1, 1, 1], [1.4, 4.5, 1, 3.5, 1, 1, 1]], [[3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 1.4, 3.5, 1, 1, 1]], [[4.5, 1, 1.4, 1.4, 1, 1.4, 1], [4.5, 1, 1.4, 1.4, 1, 1.4, 1], [1, 4.5, 1.4, 1.4, 1, 1.4, 1]], [[4.5, 1.4, 1, 3.5, 1, 1, 1], [4.5, 1.4, 1, 3.5, 1, 1, 1], [4.5, 1.4, 1, 1, 3.5, 1, 1]], [[1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 3.5, 1.4, 3.5, 1]], [[1, 1.4, 1.4, 1, 4.5, 1.4, 1], [1, 1.4, 1.4, 1, 4.5, 1.4, 1], [1, 1.4, 1.4, 4.5, 1, 1.4, 1]], [[1, 1.4, 4.5, 1, 1, 3.5, 1], [1, 1.4, 4.5, 1, 1, 3.5, 1], [1, 1.4, 4.5, 1, 3.5, 1, 1]], [[1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 4.5, 1.4, 1, 1]], [[1.4, 3.5, 1, 1, 1.4, 3.5, 1], [1.4, 3.5, 1, 1, 1.4, 3.5, 1], [1.4, 3.5, 1, 1, 3.5, 1.4, 1]], [[3.5, 1.4, 1, 4.5, 1, 1, 1], [3.5, 1.4, 1, 4.5, 1, 1, 1], [3.5, 1.4, 1, 1, 4.5, 1, 1]], [[1, 1, 1, 1.4, 4.5, 1, 1.4, 1], [1, 1, 1, 1.4, 4.5, 1, 1.4, 1], [1, 1, 1, 4.5, 1.4, 1, 1.4, 1]], [[1, 1, 3.5, 1.4, 1, 3.5, 1, 1], [1, 1, 3.5, 1.4, 1, 3.5, 1, 1], [1, 1, 3.5, 1.4, 3.5, 1, 1, 1]], [[1, 1, 3.5, 1.4, 1.4, 1, 1.4, 1], [1, 1, 3.5, 1.4, 1.4, 1, 1.4, 1], [1, 1, 1.4, 3.5, 1.4, 1, 1.4, 1]], [[1.4, 1, 4.5, 1, 1.4, 1, 1, 1], [1.4, 1, 4.5, 1, 1.4, 1, 1, 1], [1.4, 4.5, 1, 1, 1.4, 1, 1, 1]], [[1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 1, 3.5, 1, 1, 1, 1]], [[3.5, 1, 1, 3.5, 1, 1.4, 1, 1], [3.5, 1, 1, 3.5, 1, 1.4, 1, 1], [3.5, 1, 1, 1, 3.5, 1.4, 1, 1]], [[1, 3.5, 1, 4.5, 1, 1, 1, 1], [1, 3.5, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 4.5, 1, 1, 1, 1]], [[1, 4.5, 1, 1, 3.5, 1, 1, 1], [1, 4.5, 1, 1, 3.5, 1, 1, 1], [1, 4.5, 1, 1, 1, 3.5, 1, 1]], [[1.4, 1, 1.4, 3.5, 1.4, 1, 1, 1], [1.4, 1, 1.4, 3.5, 1.4, 1, 1, 1], [1.4, 1, 1.4, 1.4, 3.5, 1, 1, 1]], [[3.5, 1, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 1, 4.5, 1, 1, 1]], [[3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [1.4, 3.5, 1.4, 1, 1, 1, 1.4, 1]], [[4.5, 1, 1, 1, 1.4, 1.4, 1, 1], [4.5, 1, 1, 1, 1.4, 1.4, 1, 1], [1, 4.5, 1, 1, 1.4, 1.4, 1, 1]]];
        totalSD = [[[1], [1], [2]], [[1], [1], [3]], [[1], [1], [4]], [[1], [1], [1.4]], [[1], [1], [3.5]], [[1], [1], [4.5]], [[2], [2], [1]], [[2], [2], [3]], [[2], [2], [4]], [[2], [2], [1.4]], [[2], [2], [3.5]], [[2], [2], [4.5]], [[3], [3], [1]], [[3], [3], [2]], [[3], [3], [4]], [[3], [3], [1.4]], [[3], [3], [3.5]], [[3], [3], [4.5]], [[4], [4], [1]], [[4], [4], [2]], [[4], [4], [3]], [[4], [4], [1.4]], [[4], [4], [3.5]], [[4], [4], [4.5]], [[1.4], [1.4], [1]], [[1.4], [1.4], [2]], [[1.4], [1.4], [3]], [[1.4], [1.4], [4]], [[1.4], [1.4], [3.5]], [[1.4], [1.4], [4.5]], [[3.5], [3.5], [1]], [[3.5], [3.5], [2]], [[3.5], [3.5], [3]], [[3.5], [3.5], [4]], [[3.5], [3.5], [1.4]], [[3.5], [3.5], [4.5]], [[4.5], [4.5], [1]], [[4.5], [4.5], [2]], [[4.5], [4.5], [3]], [[4.5], [4.5], [4]], [[4.5], [4.5], [1.4]], [[4.5], [4.5], [3.5]]];
        a = 0;
        b = 0;
        c = 0;
        a2 = 0;
        b2 = 0;
        c2 = 0;
        a3 = 0;
        b3 = 0;
        c3 = 0;
        aaud = 0;
        baud = 0;
        caud = 0;
        a2aud = 0;
        b2aud = 0;
        c2aud = 0;
        a3aud = 0;
        b3aud = 0;
        c3aud = 0;
        list1 = shuffle_list(JSON.parse(JSON.stringify(total)));
        for (var i, _pj_c = 0, _pj_a = list1, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran1 = randint(8, 12);
        list1.insert(ran1, [[2, 2, 4, 1, 3, 1], [2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1], "green"]);
        ran1 = randint(18, 22);
        list1.insert(ran1, [[4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 2, 1, 1, 1], "green"]);
        list2 = shuffle_list(JSON.parse(JSON.stringify(total2)));
        for (var i, _pj_c = 0, _pj_a = list2, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran2 = randint(8, 12);
        list2.insert(ran2, [[1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 3.5, 1.4, 3.5, 1], [1, 1.4, 1, 1.4, 3.5, 3.5, 1], "green"]);
        ran2 = randint(18, 22);
        list2.insert(ran2, [[3.5, 1.4, 1.4, 3.5, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], "green"]);
        listSD = shuffle_list(JSON.parse(JSON.stringify(totalSD)));
        for (var i, _pj_c = 0, _pj_a = listSD, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran3 = randint(8, 12);
        listSD.insert(ran3, [[4], [4], [3], "green"]);
        ran3 = randint(18, 22);
        listSD.insert(ran3, [[4.5], [4.5], [2], "green"]);
        pListVisReg = [[[2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1], [2, 2, 4, 1, 3, 1], "black"], [[3, 1, 4, 1, 3, 1], [3, 1, 4, 1, 3, 1], [3, 1, 4, 3, 1, 1], "black"], [[2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 3, 1, 1], [2, 1, 1, 3, 1, 1, 3, 1], "green"], [[1, 3, 4, 2, 2, 1], [3, 1, 4, 2, 2, 1], [3, 1, 4, 2, 2, 1], "black"], [[2, 1, 1, 2, 2, 3, 1, 1], [2, 1, 1, 2, 2, 3, 1, 1], [2, 1, 1, 2, 2, 1, 3, 1], "green"], [[4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 1, 3, 1], "black"]];
        pListVisIrreg = [[[1, 1, 3.5, 4.5, 3.5, 1], [1, 3.5, 1, 4.5, 3.5, 1], [1, 1, 3.5, 4.5, 3.5, 1], "black"], [[1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 4.5, 1.4, 1, 1], "green"], [[3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [1.4, 3.5, 1.4, 1, 1, 1, 1.4, 1], "black"], [[3.5, 1, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], "black"], [[1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 1.4, 3.5, 3.5, 1.4, 1, 1], [1, 3.5, 1.4, 3.5, 1.4, 1, 1], "green"], [[1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 1, 3.5, 1, 1, 1, 1], "black"]];
        pListVisSD = [[[1], [1], [3], "black"], [[2], [2], [1], "green"], [[3.5], [1.4], [3.5], "black"], [[4.5], [4.5], [3], "green"], [[2], [3.5], [3.5], "black"], [[2], [3.5], [2], "black"]];
        intervall = list1[a][b].length;
        intervall2 = list2[a2][b2].length;
        pIntervall = total[a][b].length;
        positionn=function(intervall) {
            var pos5, pos6, pos7;
            pos5 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0]];
            pos6 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0]];
            pos7 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0]];
            if ((intervall === 6)) {
                return pos5;
            } else {
                if ((intervall === 7)) {
                    return pos6;
                } else {
                    if ((intervall === 8)) {
                        return pos7;
                    }
                }
            }
        }
        repetitionn=function(intervall) {
            if ((intervall === 6)) {
                return 18;
            } else {
                if ((intervall === 7)) {
                    return 21;
                } else {
                    if ((intervall === 8)) {
                        return 24;
                    }
                }
            }
        }
        durationn=function(intervall, isAud = false) {
            var start5, start6, start7;
            if ((isAud === false)) {
                start5 = [1.5, 0, 0, 0, 0, 0];
                start6 = [1.5, 0, 0, 0, 0, 0, 0];
                start7 = [1.5, 0, 0, 0, 0, 0, 0, 0];
            } else {
                start5 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05];
                start6 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05];
                start7 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05];
            }
            if ((intervall === 6)) {
                return start5;
            } else {
                if ((intervall === 7)) {
                    return start6;
                } else {
                    if ((intervall === 8)) {
                        return start7;
                    }
                }
            }
        }
        ran = randint(1, 3);
        stop=function(List, a, b, c, isAud, ran) {
            if ((ran === 1)) {
                if (isAud) {
                    return num1_to_sec(List[a][b][c], true);
                } else {
                    return num1_to_sec(List[a][b][c]);
                }
            } else {
                if ((ran === 2)) {
                    if (isAud) {
                        return num2_to_sec(List[a][b][c], true);
                    } else {
                        return num2_to_sec(List[a][b][c]);
                    }
                } else {
                    if ((ran === 3)) {
                        if (isAud) {
                            return num3_to_sec(List[a][b][c], true);
                        } else {
                            return num3_to_sec(List[a][b][c]);
                        }
                    }
                }
            }
        }
        cross = new visual.ShapeStim({"win": win, "name": "cross", "vertices": "cross", "size": [0.05, 0.05], "ori": 0, "pos": [0, 0], "lineWidth": 1, "lineColor": [1, 1, 1], "lineColorSpace": "rgb", "fillColor": [1, 1, 1], "fillColorSpace": "rgb", "opacity": 1, "depth": (- 1.0), "interpolate": true});
        counter = 0;
        L1 = [0, 0, 0, 0, 0, 0];
        L2 = [0, 0, 0, 0, 0, 0];
        L3 = [0, 0, 0, 0, 0, 0];
        L4 = [0, 0, 0, 1, 0, 0];
        L5 = [0, 0, 0, 0, 0, 0];
        L6 = [0, 0, 0, 0, 0, 0];
        order = [L1, L2, L3, L4, L5, L6];
        shuffle(order);
  Routine main_intro
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you for doing your daily practice. During this session, we will present you with three auditory sequences in each trial and ask you to identify the one that is different.
        This session consists of one auditory block, and will take approximately 4 minutes.

        You are expected to practice this experiment for a total of 10 days over a period of 14 days. Once you have completed your 10 sessions, please inform the researcher so she can schedule the final test.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine headphones
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Attention!

        Be sure to use headphones during your participation in the auditory trials.  Playing the sound on PC speakers may cause unwanted noises that may interfere with results.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine volset
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Volume Setting

        First, we will play an example of the audio patterns you will be hearing to allow you to adjust your volume to a comfortable level.

        Press on the “space bar” to hear the audio, and adjust your volume to a comfortable level.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sound_volset
    SoundComponent sound_1
      sound [set every repeat] = $volstandard
      startVal [time (s)] = 0.5
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    SoundComponent sound_2
      sound [set every repeat] = $volstandard
      startVal [time (s)] = 5
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    SoundComponent sound_3
      sound [set every repeat] = $voldeviant
      startVal [time (s)] = 9.5
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  Routine pintroAC
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you hear a long noise like the one in the next trial, make sure to press on the “G” key instead of 1, 2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PAC
    SoundComponent sound_4
      sound [set every repeat] = $RegStandardPitch
      startVal [time (s)] = 1.5
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  Routine PACquestion
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine introAudReg
    TextComponent text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Auditory Sequence

        You will hear three auditory sequences. The timing pattern of one of these sequences is different from the other two. After hearing all three sequences, you will be asked which sequence was different. Press 1, 2, or 3 on the keyboard to answer.

        The answers you provide will be reviewed and analyzed. Please remain focused and attentive while providing your answers.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audRegCode
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        count=0
        playedReg = []

        audregACran1=randint(4,8)
        #audregACran2=randint(15,19)


        count1=0
        count2=0
        count3=0
      Begin JS Experiment:
        count = 0;
        playedReg = [];
        audregACran1 = randint(4, 8);
        //audregACran2 = randint(15, 19);
        count1 = 0;
        count2 = 0;
        count3 = 0;
      Begin JS Routine:
        LIST2 = [standard, standard, devient];
        maxRes = 4;
        function findDev(l) {
            return l.index(devient);
        }
        function check(maxRes, l) {
            var d;
            [count1, count2, count3];
            shuffle(l);
            d = findDev(l);
            if ((d === 0)) {
                if ((count1 < maxRes)) {
                    count1 += 1;
                    return l;
                } else {
                    return check(maxRes, l);
                }
            } else {
                if ((d === 1)) {
                    if ((count2 < maxRes)) {
                        count2 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                } else {
                    if ((count3 < maxRes)) {
                        count3 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                }
            }
        }
        check(maxRes, LIST2);
        console.log(`count1 is ${count1}`);
        console.log(`count2 is ${count2}`);
        console.log(`count3 is ${count3}`);
        soundVar = 0;
      Begin Routine:
        LIST2=[standard,standard,devient]
        maxRes = 4
        #seqs = 30
        #this code is for counterbalancing the deviant version
        def findDev(l):
            return l.index(devient)

        def check(maxRes,l):
            global count1,count2,count3
            shuffle(l)
            d = findDev(l)
            if(d == 0):
                if(count1 < maxRes):
                    count1 += 1
                    return l
                else:
                    return check(maxRes,l)
            elif(d == 1):
                if(count2 < maxRes):
                    count2 += 1
                    return l
                else:
                    return check(maxRes,l)
            else:
                if(count3 < maxRes):
                    count3 += 1
                    return l
                else:
                    return check(maxRes,l)

        #for i in range(0,seqs):
        check(maxRes,LIST2)
        print(f'count1 is {count1}')
        print(f'count2 is {count2}')
        print(f'count3 is {count3}')


        soundVar = 0
        #fText = f"selected row is {LIST2[soundVar]}\n"
        #this part is for preventing the rhyhm with the same number be played again
        #getRow is a number like 23, 5 etc.

        #def getRow(s):
        #    splited = s.split("RegPatterns/",1)
        #    f = splited[1].split("-ms")
        #    return f[0]
        #
        #continuePlaying = True
        #if(getRow(standard) in playedReg):
        #    #fText += f"{getRow(standard)}  is in the array, Skipping"
        #    continuePlaying = False
        #else:
        #    playedReg.append(getRow(standard))
        #    count  += 1


        #fText += f"{getRow(standard)}  is not in the array playing {getRow(standard)}"

        #fText += f"\n Array is {playedReg}"
  Routine soundreg
    SoundComponent sound_5
      sound [set every repeat] = $LIST2[soundVar]
      startVal [time (s)] = 1
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  Routine sleepaudreg
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        #if continuePlaying == True:
        trials_2.addData('RegAudSequence',LIST2[soundVar])
        for i in range(0,3):
            if 'd-ms' in LIST2[soundVar]:
                trials_2.addData('diff-reg',soundVar+1)
            else:
                trials_2.addData('diff-reg',0)
        soundVar+=1


        if count == audregACran1:
            cc1=1
        else:
            cc1=0
  Routine questionreg
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        count+=1
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent key_resp_7
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine audregAC
    SoundComponent sound_6
      sound [set every repeat] = $RegStandardPitch
      startVal [time (s)] = 1.5
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  Routine audregACques
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent key_resp_8
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine end
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have finished your practice session.

        Please do not close the browser. Press on the “space bar” to continue.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine codejs
  Routine code2
  Routine main_intro
  Routine headphones
  Routine volset
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'volstandard': 'RegPatterns/1-ms_2_2_4_1_3_unit230.mp3', 'voldeviant': 'RegPatterns/1d-ms_2_2_4_3_1_unit230.mp3'}]
    conditionsFile = volset.xlsx
    loopType = random
    nReps = 1
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    Routine sound_volset
  LoopTerminator trials
  Routine pintroAC
  LoopInitiator trials_2 loopType="TrialHandler"
    conditions = [{'RegStandardPitch': 'RegPatterns/Noise.mp3', 'RegDeviantPitch': 'RegPatterns/Noise.mp3'}]
    conditionsFile = pitchReg.xlsx
    loopType = random
    nReps = 1
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    Routine PAC
    Routine PACquestion
  LoopTerminator trials_2
  Routine introAudReg
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = mainReg.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'standard': 'RegPatterns/2-ms_3_1_4_1_3_unit250.mp3', 'devient': 'RegPatterns/2d-ms_3_1_4_3_1_unit250.mp3'},
      {'standard': 'RegPatterns/3-ms_3_1_4_2_2_unit270.mp3', 'devient': 'RegPatterns/3d-ms_1_3_4_2_2_unit270.mp3'},
      {'standard': 'RegPatterns/9-ms_2_1_1_1_3_4_unit270.mp3', 'devient': 'RegPatterns/9d-ms_2_1_1_3_1_4_unit270.mp3'},
      {'standard': 'RegPatterns/12-ms_3_1_1_3_2_2_unit270.mp3', 'devient': 'RegPatterns/12d-ms_3_1_3_1_2_2_unit270.mp3'},
      {'standard': 'RegPatterns/14-ms_2_1_1_4_1_3_unit250.mp3', 'devient': 'RegPatterns/14d-ms_2_1_1_4_3_1_unit250.mp3'},
      {'standard': 'RegPatterns/16-ms_3_1_2_2_1_3_unit230.mp3', 'devient': 'RegPatterns/16d-ms_3_1_2_2_3_1_unit230.mp3'},
      {'standard': 'RegPatterns/18-ms_4_2_2_1_1_2_unit270.mp3', 'devient': 'RegPatterns/18d-ms_4_2_2_2_1_1_unit270.mp3'},
      {'standard': 'RegPatterns/19-ms_1_1_2_3_1_2_2_unit230.mp3', 'devient': 'RegPatterns/19d-ms_1_1_2_1_3_2_2_unit230.mp3'},
      {'standard': 'RegPatterns/26-ms_1_1_2_2_1_1_4_unit250.mp3', 'devient': 'RegPatterns/26d-ms_1_1_2_1_1_2_4_unit250.mp3'},
      {'standard': 'RegPatterns/29-ms_3_1_2_1_1_1_3_unit250.mp3', 'devient': 'RegPatterns/29d-ms_3_1_2_1_1_3_1_unit250.mp3'},
      {'standard': 'RegPatterns/30-ms_3_1_2_2_1_1_2_unit230.mp3', 'devient': 'RegPatterns/30d-ms_1_3_2_2_1_1_2_unit230.mp3'},
      {'standard': 'RegPatterns/20-ms_2_1_1_2_2_3_1_unit230.mp3', 'devient': 'RegPatterns/20d-ms_2_1_1_2_2_1_3_unit230.mp3'}]
    Routine audRegCode
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine soundreg
      Routine sleepaudreg
    LoopTerminator trials_3
    Routine questionreg
    LoopInitiator trials_4 loopType="TrialHandler"
      conditions = [{'RegStandardPitch': 'RegPatterns/Noise.mp3', 'RegDeviantPitch': 'RegPatterns/Noise.mp3'}]
      conditionsFile = pitchReg.xlsx
      loopType = random
      nReps = cc1
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      Routine audregAC
      Routine audregACques
    LoopTerminator trials_4
  LoopTerminator trials_5
  Routine end
