PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Completed URL = $'https://uwo.eu.qualtrics.com/jfe/form/SV_6ofm794x4okN4nY?UniqueID='+expInfo['participant']+'&complete=1'
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = $'https://uwo.eu.qualtrics.com/jfe/form/SV_6ofm794x4okN4nY?UniqueID='+expInfo['participant']+'&complete=0'
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1366, 768]
  expName = finalversion
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Routines
  Routine questionSeqVis2
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False

        cross.setAutoDraw(False)
      End Routine:
        if a2 > irregVisPracReps - 1 and isPractice == True:
            a2 = 0
            b2 = 0
            c2 = 0
            isPractice = False
            showIntro = True
            ran = getRandomVis()
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent main_key_resp_visIrreg
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine code1_1SeqVis
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import copy as copy
        bg_music = sound.Sound('file.wav',stereo = True,volume=0.1)
        #def num1_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.220 * n-0.05)
        #    return float(0.220 * n)

        def ACsdvis():
            if mainList[a3][3] == 'green':
                return 0
            else:
                return 1.5

        def num1_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.230 * n-0.05)
            return float(0.230 * n)

        #def num3_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.240 * n-0.05)
        #    return float(0.240 * n)

        def num2_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.250 * n-0.05)
            return float(0.250 * n)

        #def num5_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.260 * n-0.05)
        #    return float(0.260 * n)

        def num3_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.270 * n-0.05)
            return float(0.270 * n)

        def shuffle_list(List):
        #    global totalShuffle
        #    totalShuffle += 1
            counta=0
            countb=0
            countc=0
            for ii in List:
                shuffle(ii)
                d = difFinder(ii)
                if(d == 1):
                    counta += 1
                elif(d == 2):
                    countb += 1
                elif(d == 3):
                    countc += 1
            if(counta == countb and counta == countc):
                shuffle(List)
                return List
            else:
                return shuffle_list(List)

        def difFinder(i):
            if i[0] != i[1] and i[0] != i[2]:
                return 1;
            if i[1] != i[0] and i[1] != i[2]:
                return 2;
            if i[2] != i[0] and i[2] != i[1]:
                return 3;

        total=[#[[2,2,4,1,3,1],[2,2,4,1,3,1],[2,2,4,3,1,1]],
        [[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1]],
        [[3,1,4,2,2,1],[3,1,4,2,2,1],[1,3,4,2,2,1]],
        [[4,1,3,3,1,1],[4,1,3,3,1,1],[4,3,1,3,1,1]],
        #[[4,3,1,1,3,1],[4,3,1,1,3,1],[4,1,3,1,3,1]],
        [[4,3,1,2,2,1],[4,3,1,2,2,1],[4,1,3,2,2,1]],
        [[1,1,2,3,1,4,1],[1,1,2,3,1,4,1],[1,1,2,1,3,4,1]],
        #[[1,1,2,4,2,2,1],[1,1,2,4,2,2,1],[2,1,1,4,2,2,1]],
        [[2,1,1,1,3,4,1],[2,1,1,1,3,4,1],[2,1,1,3,1,4,1]],
        #[[2,2,2,1,1,4,1],[2,2,2,1,1,4,1],[2,2,1,1,2,4,1]],
        [[2,2,3,1,1,3,1],[2,2,3,1,1,3,1],[2,2,3,1,3,1,1]],
        [[3,1,1,3,2,2,1],[3,1,1,3,2,2,1],[3,1,3,1,2,2,1]],
        [[2,1,1,2,2,4,1],[2,1,1,2,2,4,1],[1,1,2,2,2,4,1]],
        [[2,1,1,4,1,3,1],[2,1,1,4,1,3,1],[2,1,1,4,3,1,1]],
        [[2,2,1,3,3,1,1],[2,2,1,3,3,1,1],[2,2,1,3,1,3,1]],
        [[3,1,2,2,1,3,1],[3,1,2,2,1,3,1],[3,1,2,2,3,1,1]],
        [[4,1,1,2,3,1,1],[4,1,1,2,3,1,1],[4,1,1,2,1,3,1]],
        [[4,2,2,1,1,2,1],[4,2,2,1,1,2,1],[4,2,2,2,1,1,1]],
        [[1,1,2,3,1,2,2,1],[1,1,2,3,1,2,2,1],[1,1,2,1,3,2,2,1]],
        [[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1]],
        [[2,1,1,3,1,1,3,1],[2,1,1,3,1,1,3,1],[2,1,1,3,1,3,1,1]],
        #[[3,1,4,1,1,1,1,1],[3,1,4,1,1,1,1,1],[1,3,4,1,1,1,1,1]],
        [[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1]],
        [[4,2,2,1,1,1,1,1],[4,2,2,1,1,1,1,1],[4,2,1,1,2,1,1,1]],
        #[[1,1,1,1,4,3,1,1],[1,1,1,1,4,3,1,1],[1,1,1,1,4,1,3,1]],
        [[1,1,2,2,1,1,4,1],[1,1,2,2,1,1,4,1],[1,1,2,1,1,2,4,1]],
        [[1,1,2,3,1,1,3,1],[1,1,2,3,1,1,3,1],[1,1,2,3,1,3,1,1]],
        [[2,2,1,1,1,1,4,1],[2,2,1,1,1,1,4,1],[2,1,1,2,1,1,4,1]],
        [[3,1,2,1,1,1,3,1],[3,1,2,1,1,1,3,1],[3,1,2,1,1,3,1,1]],
        [[3,1,2,2,1,1,2,1],[3,1,2,2,1,1,2,1],[1,3,2,2,1,1,2,1]]]

        total2=[[[1,1,3.5,4.5,3.5,1],[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1]],
        [[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[3.5,1,1.4,4.5,1.4,1]],
        [[1.4,3.5,1.4,4.5,1,1],[1.4,3.5,1.4,4.5,1,1],[1.4,3.5,1.4,1,4.5,1]],
        #[[3.5,3.5,1,4.5,1,1],[3.5,3.5,1,4.5,1,1],[3.5,3.5,4.5,1,1,1]],
        #[[4.5,1,1,3.5,3.5,1],[4.5,1,1,3.5,3.5,1],[1,4.5,1,3.5,3.5,1]],
        #[[4.5,1,1.4,3.5,1.4,1],[4.5,1,1.4,3.5,1.4,1],[1,4.5,1.4,3.5,1.4,1]],
        [[1,3.5,1.4,3.5,1.4,1,1],[1,3.5,1.4,3.5,1.4,1,1],[1,1.4,3.5,3.5,1.4,1,1]],
        [[1.4,1,4.5,1.4,1.4,1,1],[1.4,1,4.5,1.4,1.4,1,1],[1.4,4.5,1,1.4,1.4,1,1]],
        [[1.4,1,4.5,3.5,1,1,1],[1.4,1,4.5,3.5,1,1,1],[1.4,4.5,1,3.5,1,1,1]],
        [[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,1.4,3.5,1,1,1]],
        [[4.5,1,1.4,1.4,1,1.4,1],[4.5,1,1.4,1.4,1,1.4,1],[1,4.5,1.4,1.4,1,1.4,1]],
        [[4.5,1.4,1,3.5,1,1,1],[4.5,1.4,1,3.5,1,1,1],[4.5,1.4,1,1,3.5,1,1]],
        [[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,3.5,1.4,3.5,1]],
        [[1,1.4,1.4,1,4.5,1.4,1],[1,1.4,1.4,1,4.5,1.4,1],[1,1.4,1.4,4.5,1,1.4,1]],
        [[1,1.4,4.5,1,1,3.5,1],[1,1.4,4.5,1,1,3.5,1],[1,1.4,4.5,1,3.5,1,1]],
        [[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,4.5,1.4,1,1]],
        [[1.4,3.5,1,1,1.4,3.5,1],[1.4,3.5,1,1,1.4,3.5,1],[1.4,3.5,1,1,3.5,1.4,1]],
        #[[3.5,1.4,1,4.5,1,1,1],[3.5,1.4,1,4.5,1,1,1],[3.5,1.4,1,1,4.5,1,1]],
        [[1,1,1,1.4,4.5,1,1.4,1],[1,1,1,1.4,4.5,1,1.4,1],[1,1,1,4.5,1.4,1,1.4,1]],
        #[[1,1,3.5,1.4,1,3.5,1,1],[1,1,3.5,1.4,1,3.5,1,1],[1,1,3.5,1.4,3.5,1,1,1]],
        [[1,1,3.5,1.4,1.4,1,1.4,1],[1,1,3.5,1.4,1.4,1,1.4,1],[1,1,1.4,3.5,1.4,1,1.4,1]],
        [[1.4,1,4.5,1,1.4,1,1,1],[1.4,1,4.5,1,1.4,1,1,1],[1.4,4.5,1,1,1.4,1,1,1]],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1]],
        [[3.5,1,1,3.5,1,1.4,1,1],[3.5,1,1,3.5,1,1.4,1,1],[3.5,1,1,1,3.5,1.4,1,1]],
        [[1,3.5,1,4.5,1,1,1,1],[1,3.5,1,4.5,1,1,1,1],[3.5,1,1,4.5,1,1,1,1]],
        [[1,4.5,1,1,3.5,1,1,1],[1,4.5,1,1,3.5,1,1,1],[1,4.5,1,1,1,3.5,1,1]],
        [[1.4,1,1.4,3.5,1.4,1,1,1],[1.4,1,1.4,3.5,1.4,1,1,1],[1.4,1,1.4,1.4,3.5,1,1,1]],
        [[3.5,1,1,4.5,1,1,1,1],[3.5,1,1,4.5,1,1,1,1],[3.5,1,1,1,4.5,1,1,1]],
        #[[3.5,1.4,1.4,1,1,1,1.4,1],[3.5,1.4,1.4,1,1,1,1.4,1],[1.4,3.5,1.4,1,1,1,1.4,1]],
        [[4.5,1,1,1,1.4,1.4,1,1],[4.5,1,1,1,1.4,1.4,1,1],[1,4.5,1,1,1.4,1.4,1,1]]]

        totalSD=[#[[1],[1],[2]],
        [[1],[1],[3]],
        [[1],[1],[4]],
        #[[1],[1],[1.4]],
        #[[1],[1],[3.5]],
        [[1],[1],[4.5]],
        [[2],[2],[1]],
        [[2],[2],[3]],
        #[[2],[2],[4]],
        #[[2],[2],[1.4]],
        #[[2],[2],[3.5]],
        [[2],[2],[4.5]],
        #[[3],[3],[1]],
        #[[3],[3],[2]],
        #[[3],[3],[4]],
        [[3],[3],[1.4]],
        #[[3],[3],[3.5]],
        [[3],[3],[4.5]],
        #[[4],[4],[1]],
        [[4],[4],[2]],
        [[4],[4],[3]],
        [[4],[4],[1.4]],
        #[[4],[4],[3.5]],
        [[4],[4],[4.5]],
        [[1.4],[1.4],[1]],
        [[1.4],[1.4],[2]],
        #[[1.4],[1.4],[3]],
        #[[1.4],[1.4],[4]],
        [[1.4],[1.4],[3.5]],
        #[[1.4],[1.4],[4.5]],
        [[3.5],[3.5],[1]],
        [[3.5],[3.5],[2]],
        [[3.5],[3.5],[3]],
        [[3.5],[3.5],[4]],
        #[[3.5],[3.5],[1.4]],
        [[3.5],[3.5],[4.5]],
        #[[4.5],[4.5],[1]],
        #[[4.5],[4.5],[2]],
        #[[4.5],[4.5],[3]],
        #[[4.5],[4.5],[4]],
        [[4.5],[4.5],[1.4]]]
        #[[4.5],[4.5],[3.5]]]
        a=0
        b=0
        c=0
        a2=0
        b2=0
        c2=0
        a3=0
        b3=0
        c3=0
        aaud=0
        baud=0
        caud=0
        a2aud=0
        b2aud=0
        c2aud=0
        a3aud=0
        b3aud=0
        c3aud=0
        at = 0
        bt = 0
        ct = 0
        at2 = 0
        bt2 = 0
        ct2 = 0
        at3 = 0
        bt3 = 0
        ct3 = 0

        list1=shuffle_list(copy.deepcopy(total))
        for i in list1:
          i.append('black')
        ran1 = randint(6,10)
        list1.insert(ran1,[[6],[6],[6],'green'])
        ran1 = randint(14,18)
        list1.insert(ran1,[[6],[6],[6],'green'])

        list2=shuffle_list(copy.deepcopy(total2))
        for i in list2:
          i.append('black')
        ran2 = randint(6,10)
        list2.insert(ran2,[[6],[6],[6],'green'])
        ran2 = randint(14,18)
        list2.insert(ran2,[[6],[6],[6],'green'])

        listSD=shuffle_list(copy.deepcopy(totalSD))
        for i in listSD:
          i.append('black')
        ran3 = randint(5,9)
        listSD.insert(ran3,[[6],[6],[6],'green'])
        ran3 = randint(12,16)
        listSD.insert(ran3,[[6],[6],[6],'green'])
        #list1aud=shuffle_list(copy.deepcopy(total))
        #list2aud=shuffle_list(copy.deepcopy(total2))
        #listSDaud=shuffle_list(copy.deepcopy(totalSD))
        pListVisReg=[[[2,2,4,1,3,1],[2,2,4,3,1,1],[2,2,4,1,3,1],'black'],
        [[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1],'black'],
        [[6],[6],[6],'green'],
        [[1,3,4,2,2,1],[3,1,4,2,2,1],[3,1,4,2,2,1],'black'],
        [[6],[6],[6],'green'],
        [[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1],'black']]
        #pListVisReg = shuffle_list(copy.deepcopy(total))
        #pListVisIrreg = shuffle_list(copy.deepcopy(total2))
        pListVisIrreg = [[[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1],[1,1,3.5,4.5,3.5,1],'black'],
        [[6],[6],[6],'green'],
        [[3.5,1.4,1.4,1,1,1,1.4,1],[3.5,1.4,1.4,1,1,1,1.4,1],[1.4,3.5,1.4,1,1,1,1.4,1],'black'],
        [[3.5,1,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],'black'],
        [[6],[6],[6],'green'],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1],'black']]
        #pListVisSD = shuffle_list(copy.deepcopy(totalSD))
        pListVisSD = [[[1],[1],[3],'black'],
        [[6],[6],[6],'green'],
        [[3.5],[1.4],[3.5],'black'],
        [[6],[6],[6],'green'],
        [[2],[3.5],[3.5],'black'],
        [[2],[3.5],[2],'black']]
        #pListAudReg = shuffle_list(copy.deepcopy(total))
        #pListAudIrreg = shuffle_list(copy.deepcopy(total2))
        #pListAudSD = shuffle_list(copy.deepcopy(totalSD))
        listTact = shuffle_list(copy.copy(total))
        ran1 = randint(6,10)
        listTact.insert(ran1,[[10,10,10,10,10,10],[10,10,10,10,10,10],[10,10,10,10,10,10]])
        ran1 = randint(14,18)
        listTact.insert(ran1,[[10,10,10,10,10,10],[10,10,10,10,10,10],[10,10,10,10,10,10]])

        listTact2 = shuffle_list(copy.copy(total2))
        ran2 = randint(6,10)
        listTact2.insert(ran2,[[10,10,10,10,10,10],[10,10,10,10,10,10],[10,10,10,10,10,10]])
        ran2 = randint(14,18)
        listTact2.insert(ran2,[[10,10,10,10,10,10],[10,10,10,10,10,10],[10,10,10,10,10,10]])

        listTactSD = shuffle_list(copy.copy(totalSD))
        ran3 = randint(5,9)
        listTactSD.insert(ran3,[[10],[10],[10]])
        ran3 = randint(12,16)
        listTactSD.insert(ran3,[[10],[10],[10]])


        pListTact = [[[2,2,4,1,3,1],[2,2,4,3,1,1],[2,2,4,1,3,1]],
        [[10,10,10,10,10,10],[10,10,10,10,10,10],[10,10,10,10,10,10]],
        [[2,1,1,3,1,1,3,1],[2,1,1,3,1,3,1,1],[2,1,1,3,1,1,3,1]],
        [[10,10,10,10,10,10],[10,10,10,10,10,10],[10,10,10,10,10,10]],
        [[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1]],
        [[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1]]]

        pListTactIrreg = [[[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1],[1,1,3.5,4.5,3.5,1]],
        [[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,4.5,1.4,1,1]],
        [[10,10,10,10,10,10,10],[10,10,10,10,10,10,10],[10,10,10,10,10,10,10]],
        [[3.5,1,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1]],
        [[10,10,10,10,10,10,10],[10,10,10,10,10,10,10],[10,10,10,10,10,10,10]],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1]]]

        pListTactSD = [[[1],[1],[3]],
        [[10],[10],[10]],
        [[3.5],[1.4],[3.5]],
        [[10],[10],[10]],
        [[2],[3.5],[3.5]],
        [[2],[3.5],[2]]]

        intervall=len(list1[a][b])
        intervall2=len(list2[a2][b2])
        #intervallaud=len(list1aud[aaud][baud])
        #intervall2aud=len(list2aud[a2aud][b2aud])
        #intervallvolset=len(total[avolset][bvolset])
        pIntervall = len(total[a][b])

        def rotation(intervall):
            rot5=[0,45,0,45,0,45]
            rot6=[0,45,0,45,0,45,0]
            rot7=[0,45,0,45,0,45,0,45]
            if intervall == 6:
                return rot5
            elif intervall == 7:
                return rot6
            elif intervall == 8:
                return rot7
            elif intervall == 1:
                return (0,0)
        def positionn(intervall):
            pos5=[(-0.3,0),(0.3,0),(-0.3,0),(0.3,0),(-0.3,0),(0.3,0)]
            pos6=[(-0.3,0),(0.3,0),(-0.3,0),(0.3,0),(-0.3,0),(0.3,0),(-0.3,0)]
            pos7=[(-0.3,0),(0.3,0),(-0.3,0),(0.3,0),(-0.3,0),(0.3,0),(-0.3,0),(0.3,0)]
            if intervall == 6:
                return pos5
            elif intervall == 7:
                return pos6
            elif intervall == 8:
                return pos7
            elif intervall == 1:
                return (0,0)


        def repetitionn(intervall):
            if intervall == 6:
                return 18
            elif intervall == 7:
                return 21
            elif intervall == 8:
                return 24
            elif intervall == 1:
                return 3

        def durationn(intervall,isAud=False): #write lists inside of function!
            if(isAud == False):
                start5=[1.5,0,0,0,0,0]
                start6=[1.5,0,0,0,0,0,0]
                start7=[1.5,0,0,0,0,0,0,0]
                start8=[0,0,0]
            else:
                start5=[1.5,0.05,0.05,0.05,0.05,0.05]
                start6=[1.5,0.05,0.05,0.05,0.05,0.05,0.05]
                start7=[1.5,0.05,0.05,0.05,0.05,0.05,0.05,0.05]

            if intervall == 6:
                return start5
            elif intervall == 7:
                return start6
            elif intervall == 8:
                return start7
            elif intervall == 1:
                return start8
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        def getRandomSD():
            global visCounter1,visCounter2,visCounter3
            print(f"C1 : {visCounter1} , C2 : {visCounter2}, C3: {visCounter3}")
            r = randint(1,4)
            if r == 1:
                if(visCounter1 < 7):
                    visCounter1 += 1
                    return r
                else:
                    return getRandomSD()
            if r == 2:
                if(visCounter2 < 7):
                    visCounter2 += 1
                    return r
                else:
                    return getRandomSD()
            if r == 3:
                if(visCounter3 < 7):
                    visCounter3 += 1
                    return r
                else:
                    return getRandomSD()
        def getRandomVis(sd = False):
            global visCounter1,visCounter2,visCounter3
            print(f"C1 : {visCounter1} , C2 : {visCounter2}, C3: {visCounter3}")
            r = randint(1,4)
            if sd == True:
                if r == 1:
                    if(visCounter1 < 8):
                        visCounter1 += 1
                        print(f"viscounter1 = {visCounter1}")
                        return r
                    else:
                        return getRandomVis()
                if r == 2:
                    if(visCounter2 < 8):
                        visCounter2 += 1
                        print(f"viscounter2 = {visCounter2}")
                        return r
                    else:
                        return getRandomVis()
                if r == 3:
                    if(visCounter3 < 8):
                        visCounter3 += 1
                        print(f"viscounter3 = {visCounter3}")
                        return r
                    else:
                        return getRandomVis()
            else:
                if r == 1:
                    if(visCounter1 < 8):
                        visCounter1 += 1
                        return r
                    else:
                        return getRandomVis()
                if r == 2:
                    if(visCounter2 < 8):
                        visCounter2 += 1
                        return r
                    else:
                        return getRandomVis()
                if r == 3:
                    if(visCounter3 < 8):
                        visCounter3 += 1
                        return r
                    else:
                        return getRandomVis()

        def stop(List,a,b,c,isAud,ran):
            if ran==1:
                if(isAud):
                    return num1_to_sec(List[a][b][c],True)
                else:
                    return num1_to_sec(List[a][b][c])
            elif ran==2:
                if(isAud):
                    return num2_to_sec(List[a][b][c],True)
                else:
                    return num2_to_sec(List[a][b][c])
            elif ran==3:
                if(isAud):
                    return num3_to_sec(List[a][b][c],True)
                else:
                    return num3_to_sec(List[a][b][c])
        #    elif ran==4:
        #        if(isAud):
        #            return num4_to_sec(List[a][b][c],True)
        #        else:
        #            return num4_to_sec(List[a][b][c])
        #    elif ran==5:
        #        if(isAud):
        #            return num5_to_sec(List[a][b][c],True)
        #        else:
        #            return num5_to_sec(List[a][b][c])
        #    elif ran==6:
        #        if(isAud):
        #            return num6_to_sec(List[a][b][c],True)
        #        else:
        #            return num6_to_sec(List[a][b][c])

        # this code is related to the fixation cross in the middle of the screen
        cross = visual.ShapeStim(
            win=win, name='cross', vertices='cross',
            size=(0.05, 0.05),
            ori=0, pos=(0, 0),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-1.0, interpolate=True)

        counter=0
        L1=[0,0,0,0,0,0,0,0,0]#tactile beat sequence
        L2=[0,0,0,0,0,0,0,0,0]#tactile nobeat sequence
        L3=[0,0,0,0,0,0,0,0,0]#tactile single duration
        L4=[0,0,0,1,0,0,0,0,0]#visual beat sequence
        L5=[0,0,0,0,1,0,0,0,0]#visual nobeat sequence
        L6=[0,0,0,0,0,1,0,0,0]#visual single duration
        L7=[0,0,0,0,0,0,1,0,0]#auditory beat sequence
        L8=[0,0,0,0,0,0,0,1,0]#auditory nobeat sequcne
        L9=[0,0,0,0,0,0,0,0,1]#auditory single duration
        order=[L1,L2,L3,L4,L5,L6,L7,L8,L9]
        #shuffle(order)
      Begin JS Experiment:
        function num1_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.23 * n) - 0.05));
            }
            return Number.parseFloat((0.23 * n));
        }
        function num2_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.25 * n) - 0.05));
            }
            return Number.parseFloat((0.25 * n));
        }
        function num3_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.27 * n) - 0.05));
            }
            return Number.parseFloat((0.27 * n));
        }
        function shuffle_list(List) {
            var counta, countb, countc, d;
            counta = 0;
            countb = 0;
            countc = 0;
            for (var ii, _pj_c = 0, _pj_a = List, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                ii = _pj_a[_pj_c];
                shuffle(ii);
                d = difFinder(ii);
                if ((d === 1)) {
                    counta += 1;
                } else {
                    if ((d === 2)) {
                        countb += 1;
                    } else {
                        if ((d === 3)) {
                            countc += 1;
                        }
                    }
                }
            }
            if (((counta === countb) && (counta === countc))) {
                shuffle(List);
                return List;
            } else {
                return shuffle_list(List);
            }
        }
        difFinder=function(i) {
            function arrays_equal(a, b) { return !!a && !!b && !(a < b || b < a); }
            if (!arrays_equal(i[0], i[1]) && !arrays_equal(i[0], i[2])) {
                return 1;
            }
            if (!arrays_equal(i[0], i[1]) && !arrays_equal(i[1], i[2])) {
                return 2;
            }
            if (!arrays_equal(i[0], i[2]) && !arrays_equal(i[1], i[2])) {
                return 3;
            }
        }

        total = [[[2, 2, 4, 1, 3, 1], [2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1]], [[3, 1, 4, 1, 3, 1], [3, 1, 4, 1, 3, 1], [3, 1, 4, 3, 1, 1]], [[3, 1, 4, 2, 2, 1], [3, 1, 4, 2, 2, 1], [1, 3, 4, 2, 2, 1]], [[4, 1, 3, 3, 1, 1], [4, 1, 3, 3, 1, 1], [4, 3, 1, 3, 1, 1]], [[4, 3, 1, 1, 3, 1], [4, 3, 1, 1, 3, 1], [4, 1, 3, 1, 3, 1]], [[4, 3, 1, 2, 2, 1], [4, 3, 1, 2, 2, 1], [4, 1, 3, 2, 2, 1]], [[1, 1, 2, 3, 1, 4, 1], [1, 1, 2, 3, 1, 4, 1], [1, 1, 2, 1, 3, 4, 1]], [[1, 1, 2, 4, 2, 2, 1], [1, 1, 2, 4, 2, 2, 1], [2, 1, 1, 4, 2, 2, 1]], [[2, 1, 1, 1, 3, 4, 1], [2, 1, 1, 1, 3, 4, 1], [2, 1, 1, 3, 1, 4, 1]], [[2, 2, 2, 1, 1, 4, 1], [2, 2, 2, 1, 1, 4, 1], [2, 2, 1, 1, 2, 4, 1]], [[2, 2, 3, 1, 1, 3, 1], [2, 2, 3, 1, 1, 3, 1], [2, 2, 3, 1, 3, 1, 1]], [[3, 1, 1, 3, 2, 2, 1], [3, 1, 1, 3, 2, 2, 1], [3, 1, 3, 1, 2, 2, 1]], [[2, 1, 1, 2, 2, 4, 1], [2, 1, 1, 2, 2, 4, 1], [1, 1, 2, 2, 2, 4, 1]], [[2, 1, 1, 4, 1, 3, 1], [2, 1, 1, 4, 1, 3, 1], [2, 1, 1, 4, 3, 1, 1]], [[2, 2, 1, 3, 3, 1, 1], [2, 2, 1, 3, 3, 1, 1], [2, 2, 1, 3, 1, 3, 1]], [[3, 1, 2, 2, 1, 3, 1], [3, 1, 2, 2, 1, 3, 1], [3, 1, 2, 2, 3, 1, 1]], [[4, 1, 1, 2, 3, 1, 1], [4, 1, 1, 2, 3, 1, 1], [4, 1, 1, 2, 1, 3, 1]], [[4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 2, 1, 1, 1]], [[1, 1, 2, 3, 1, 2, 2, 1], [1, 1, 2, 3, 1, 2, 2, 1], [1, 1, 2, 1, 3, 2, 2, 1]], [[2, 1, 1, 2, 2, 3, 1, 1], [2, 1, 1, 2, 2, 3, 1, 1], [2, 1, 1, 2, 2, 1, 3, 1]], [[2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 3, 1, 1]], [[3, 1, 4, 1, 1, 1, 1, 1], [3, 1, 4, 1, 1, 1, 1, 1], [1, 3, 4, 1, 1, 1, 1, 1]], [[4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 1, 3, 1]], [[4, 2, 2, 1, 1, 1, 1, 1], [4, 2, 2, 1, 1, 1, 1, 1], [4, 2, 1, 1, 2, 1, 1, 1]], [[1, 1, 1, 1, 4, 3, 1, 1], [1, 1, 1, 1, 4, 3, 1, 1], [1, 1, 1, 1, 4, 1, 3, 1]], [[1, 1, 2, 2, 1, 1, 4, 1], [1, 1, 2, 2, 1, 1, 4, 1], [1, 1, 2, 1, 1, 2, 4, 1]], [[1, 1, 2, 3, 1, 1, 3, 1], [1, 1, 2, 3, 1, 1, 3, 1], [1, 1, 2, 3, 1, 3, 1, 1]], [[2, 2, 1, 1, 1, 1, 4, 1], [2, 2, 1, 1, 1, 1, 4, 1], [2, 1, 1, 2, 1, 1, 4, 1]], [[3, 1, 2, 1, 1, 1, 3, 1], [3, 1, 2, 1, 1, 1, 3, 1], [3, 1, 2, 1, 1, 3, 1, 1]], [[3, 1, 2, 2, 1, 1, 2, 1], [3, 1, 2, 2, 1, 1, 2, 1], [1, 3, 2, 2, 1, 1, 2, 1]]];
        total2 = [[[1, 1, 3.5, 4.5, 3.5, 1], [1, 1, 3.5, 4.5, 3.5, 1], [1, 3.5, 1, 4.5, 3.5, 1]], [[1, 3.5, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], [3.5, 1, 1.4, 4.5, 1.4, 1]], [[1.4, 3.5, 1.4, 4.5, 1, 1], [1.4, 3.5, 1.4, 4.5, 1, 1], [1.4, 3.5, 1.4, 1, 4.5, 1]], [[3.5, 3.5, 1, 4.5, 1, 1], [3.5, 3.5, 1, 4.5, 1, 1], [3.5, 3.5, 4.5, 1, 1, 1]], [[4.5, 1, 1, 3.5, 3.5, 1], [4.5, 1, 1, 3.5, 3.5, 1], [1, 4.5, 1, 3.5, 3.5, 1]], [[4.5, 1, 1.4, 3.5, 1.4, 1], [4.5, 1, 1.4, 3.5, 1.4, 1], [1, 4.5, 1.4, 3.5, 1.4, 1]], [[1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 1.4, 3.5, 3.5, 1.4, 1, 1]], [[1.4, 1, 4.5, 1.4, 1.4, 1, 1], [1.4, 1, 4.5, 1.4, 1.4, 1, 1], [1.4, 4.5, 1, 1.4, 1.4, 1, 1]], [[1.4, 1, 4.5, 3.5, 1, 1, 1], [1.4, 1, 4.5, 3.5, 1, 1, 1], [1.4, 4.5, 1, 3.5, 1, 1, 1]], [[3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 1.4, 3.5, 1, 1, 1]], [[4.5, 1, 1.4, 1.4, 1, 1.4, 1], [4.5, 1, 1.4, 1.4, 1, 1.4, 1], [1, 4.5, 1.4, 1.4, 1, 1.4, 1]], [[4.5, 1.4, 1, 3.5, 1, 1, 1], [4.5, 1.4, 1, 3.5, 1, 1, 1], [4.5, 1.4, 1, 1, 3.5, 1, 1]], [[1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 3.5, 1.4, 3.5, 1]], [[1, 1.4, 1.4, 1, 4.5, 1.4, 1], [1, 1.4, 1.4, 1, 4.5, 1.4, 1], [1, 1.4, 1.4, 4.5, 1, 1.4, 1]], [[1, 1.4, 4.5, 1, 1, 3.5, 1], [1, 1.4, 4.5, 1, 1, 3.5, 1], [1, 1.4, 4.5, 1, 3.5, 1, 1]], [[1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 4.5, 1.4, 1, 1]], [[1.4, 3.5, 1, 1, 1.4, 3.5, 1], [1.4, 3.5, 1, 1, 1.4, 3.5, 1], [1.4, 3.5, 1, 1, 3.5, 1.4, 1]], [[3.5, 1.4, 1, 4.5, 1, 1, 1], [3.5, 1.4, 1, 4.5, 1, 1, 1], [3.5, 1.4, 1, 1, 4.5, 1, 1]], [[1, 1, 1, 1.4, 4.5, 1, 1.4, 1], [1, 1, 1, 1.4, 4.5, 1, 1.4, 1], [1, 1, 1, 4.5, 1.4, 1, 1.4, 1]], [[1, 1, 3.5, 1.4, 1, 3.5, 1, 1], [1, 1, 3.5, 1.4, 1, 3.5, 1, 1], [1, 1, 3.5, 1.4, 3.5, 1, 1, 1]], [[1, 1, 3.5, 1.4, 1.4, 1, 1.4, 1], [1, 1, 3.5, 1.4, 1.4, 1, 1.4, 1], [1, 1, 1.4, 3.5, 1.4, 1, 1.4, 1]], [[1.4, 1, 4.5, 1, 1.4, 1, 1, 1], [1.4, 1, 4.5, 1, 1.4, 1, 1, 1], [1.4, 4.5, 1, 1, 1.4, 1, 1, 1]], [[1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 1, 3.5, 1, 1, 1, 1]], [[3.5, 1, 1, 3.5, 1, 1.4, 1, 1], [3.5, 1, 1, 3.5, 1, 1.4, 1, 1], [3.5, 1, 1, 1, 3.5, 1.4, 1, 1]], [[1, 3.5, 1, 4.5, 1, 1, 1, 1], [1, 3.5, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 4.5, 1, 1, 1, 1]], [[1, 4.5, 1, 1, 3.5, 1, 1, 1], [1, 4.5, 1, 1, 3.5, 1, 1, 1], [1, 4.5, 1, 1, 1, 3.5, 1, 1]], [[1.4, 1, 1.4, 3.5, 1.4, 1, 1, 1], [1.4, 1, 1.4, 3.5, 1.4, 1, 1, 1], [1.4, 1, 1.4, 1.4, 3.5, 1, 1, 1]], [[3.5, 1, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 1, 4.5, 1, 1, 1]], [[3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [1.4, 3.5, 1.4, 1, 1, 1, 1.4, 1]], [[4.5, 1, 1, 1, 1.4, 1.4, 1, 1], [4.5, 1, 1, 1, 1.4, 1.4, 1, 1], [1, 4.5, 1, 1, 1.4, 1.4, 1, 1]]];
        totalSD = [[[1], [1], [2]], [[1], [1], [3]], [[1], [1], [4]], [[1], [1], [1.4]], [[1], [1], [3.5]], [[1], [1], [4.5]], [[2], [2], [1]], [[2], [2], [3]], [[2], [2], [4]], [[2], [2], [1.4]], [[2], [2], [3.5]], [[2], [2], [4.5]], [[3], [3], [1]], [[3], [3], [2]], [[3], [3], [4]], [[3], [3], [1.4]], [[3], [3], [3.5]], [[3], [3], [4.5]], [[4], [4], [1]], [[4], [4], [2]], [[4], [4], [3]], [[4], [4], [1.4]], [[4], [4], [3.5]], [[4], [4], [4.5]], [[1.4], [1.4], [1]], [[1.4], [1.4], [2]], [[1.4], [1.4], [3]], [[1.4], [1.4], [4]], [[1.4], [1.4], [3.5]], [[1.4], [1.4], [4.5]], [[3.5], [3.5], [1]], [[3.5], [3.5], [2]], [[3.5], [3.5], [3]], [[3.5], [3.5], [4]], [[3.5], [3.5], [1.4]], [[3.5], [3.5], [4.5]], [[4.5], [4.5], [1]], [[4.5], [4.5], [2]], [[4.5], [4.5], [3]], [[4.5], [4.5], [4]], [[4.5], [4.5], [1.4]], [[4.5], [4.5], [3.5]]];
        a = 0;
        b = 0;
        c = 0;
        a2 = 0;
        b2 = 0;
        c2 = 0;
        a3 = 0;
        b3 = 0;
        c3 = 0;
        aaud = 0;
        baud = 0;
        caud = 0;
        a2aud = 0;
        b2aud = 0;
        c2aud = 0;
        a3aud = 0;
        b3aud = 0;
        c3aud = 0;
        list1 = shuffle_list(JSON.parse(JSON.stringify(total)));
        for (var i, _pj_c = 0, _pj_a = list1, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran1 = randint(8, 12);
        list1.insert(ran1, [[2, 2, 4, 1, 3, 1], [2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1], "green"]);
        ran1 = randint(18, 22);
        list1.insert(ran1, [[4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 2, 1, 1, 1], "green"]);
        list2 = shuffle_list(JSON.parse(JSON.stringify(total2)));
        for (var i, _pj_c = 0, _pj_a = list2, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran2 = randint(8, 12);
        list2.insert(ran2, [[1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 3.5, 1.4, 3.5, 1], [1, 1.4, 1, 1.4, 3.5, 3.5, 1], "green"]);
        ran2 = randint(18, 22);
        list2.insert(ran2, [[3.5, 1.4, 1.4, 3.5, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], "green"]);
        listSD = shuffle_list(JSON.parse(JSON.stringify(totalSD)));
        for (var i, _pj_c = 0, _pj_a = listSD, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran3 = randint(8, 12);
        listSD.insert(ran3, [[4], [4], [3], "green"]);
        ran3 = randint(18, 22);
        listSD.insert(ran3, [[4.5], [4.5], [2], "green"]);
        pListVisReg = [[[2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1], [2, 2, 4, 1, 3, 1], "black"], [[3, 1, 4, 1, 3, 1], [3, 1, 4, 1, 3, 1], [3, 1, 4, 3, 1, 1], "black"], [[2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 3, 1, 1], [2, 1, 1, 3, 1, 1, 3, 1], "green"], [[1, 3, 4, 2, 2, 1], [3, 1, 4, 2, 2, 1], [3, 1, 4, 2, 2, 1], "black"], [[2, 1, 1, 2, 2, 3, 1, 1], [2, 1, 1, 2, 2, 3, 1, 1], [2, 1, 1, 2, 2, 1, 3, 1], "green"], [[4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 1, 3, 1], "black"]];
        pListVisIrreg = [[[1, 1, 3.5, 4.5, 3.5, 1], [1, 3.5, 1, 4.5, 3.5, 1], [1, 1, 3.5, 4.5, 3.5, 1], "black"], [[1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 4.5, 1.4, 1, 1], "green"], [[3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [1.4, 3.5, 1.4, 1, 1, 1, 1.4, 1], "black"], [[3.5, 1, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], "black"], [[1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 1.4, 3.5, 3.5, 1.4, 1, 1], [1, 3.5, 1.4, 3.5, 1.4, 1, 1], "green"], [[1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 1, 3.5, 1, 1, 1, 1], "black"]];
        pListVisSD = [[[1], [1], [3], "black"], [[2], [2], [1], "green"], [[3.5], [1.4], [3.5], "black"], [[4.5], [4.5], [3], "green"], [[2], [3.5], [3.5], "black"], [[2], [3.5], [2], "black"]];
        intervall = list1[a][b].length;
        intervall2 = list2[a2][b2].length;
        pIntervall = total[a][b].length;
        positionn=function(intervall) {
            var pos5, pos6, pos7;
            pos5 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0]];
            pos6 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0]];
            pos7 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0]];
            if ((intervall === 6)) {
                return pos5;
            } else {
                if ((intervall === 7)) {
                    return pos6;
                } else {
                    if ((intervall === 8)) {
                        return pos7;
                    }
                }
            }
        }
        repetitionn=function(intervall) {
            if ((intervall === 6)) {
                return 18;
            } else {
                if ((intervall === 7)) {
                    return 21;
                } else {
                    if ((intervall === 8)) {
                        return 24;
                    }
                }
            }
        }
        durationn=function(intervall, isAud = false) {
            var start5, start6, start7;
            if ((isAud === false)) {
                start5 = [1.5, 0, 0, 0, 0, 0];
                start6 = [1.5, 0, 0, 0, 0, 0, 0];
                start7 = [1.5, 0, 0, 0, 0, 0, 0, 0];
            } else {
                start5 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05];
                start6 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05];
                start7 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05];
            }
            if ((intervall === 6)) {
                return start5;
            } else {
                if ((intervall === 7)) {
                    return start6;
                } else {
                    if ((intervall === 8)) {
                        return start7;
                    }
                }
            }
        }
        ran = randint(1, 3);
        stop=function(List, a, b, c, isAud, ran) {
            if ((ran === 1)) {
                if (isAud) {
                    return num1_to_sec(List[a][b][c], true);
                } else {
                    return num1_to_sec(List[a][b][c]);
                }
            } else {
                if ((ran === 2)) {
                    if (isAud) {
                        return num2_to_sec(List[a][b][c], true);
                    } else {
                        return num2_to_sec(List[a][b][c]);
                    }
                } else {
                    if ((ran === 3)) {
                        if (isAud) {
                            return num3_to_sec(List[a][b][c], true);
                        } else {
                            return num3_to_sec(List[a][b][c]);
                        }
                    }
                }
            }
        }
        cross = new visual.ShapeStim({"win": win, "name": "cross", "vertices": "cross", "size": [0.05, 0.05], "ori": 0, "pos": [0, 0], "lineWidth": 1, "lineColor": [1, 1, 1], "lineColorSpace": "rgb", "fillColor": [1, 1, 1], "fillColorSpace": "rgb", "opacity": 1, "depth": (- 1.0), "interpolate": true});
        counter = 0;
        L1 = [1, 0, 0, 0, 0, 0];
        L2 = [0, 1, 0, 0, 0, 0];
        L3 = [0, 0, 1, 0, 0, 0];
        L4 = [0, 0, 0, 1, 0, 0];
        L5 = [0, 0, 0, 0, 1, 0];
        L6 = [0, 0, 0, 0, 0, 1];
        order = [L1, L2, L3, L4, L5, L6];
        shuffle(order);
  Routine code1_2SeqVis
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials_3.addData('Pr_SEQvis1',mainList[a][b][c])
            trials_3.addData('Pr_NumberOfIntervals',mainList[a][b])
            trials_3.addData('Pr_SEQvis3',stop(mainList,a,b,c,False,ran))
            trials_3.addData('Pr_Speed',ran)
            trials_3.addData('Pr_Pattern',mainInterval-1)
            trials_3.addData('Pr_Diff',difFinder(mainList[a]))
            trials_3.addData('Pr_Color',mainList[a][3])
        else:
            trials_3.addData('SEQvis1',mainList[a][b][c])
            trials_3.addData('NumberOfIntervals',mainList[a][b])
            trials_3.addData('SEQvis3',stop(mainList,a,b,c,False,ran))
            trials_3.addData('Speed',ran)
            trials_3.addData('Pattern',mainInterval-1)
            trials_3.addData('Diff',difFinder(mainList[a]))
            trials_3.addData('Color',mainList[a][3])
      End Routine:
        if isPractice == False:
            if c<mainInterval-1:
                c+=1
            else:
                c=0
                if b<2:
                    b+=1
                else:
                    b=0
                    if a<25:
                        a+=1
                        if mainList[a][3] == "green":
                            ran=randint(1,4)
                            print(ran,"Attention Check")
                        else:
                            ran=getRandomVis()
                            print(ran)
        else:
            if c<mainInterval-1:
                c+=1
            else:
                c=0
                if b<2:
                    b+=1
                else:
                    b=0
                    if a<25:
                        a+=1
                        ran=randint(1,4)
                        print(ran,"Practice")
  Routine code2_2SeqVis
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials.addData('irregPr_SEQvis1',mainList[a2][b2][c2])
            trials.addData('irregPr_NumberOfIntervals',mainList[a2][b2])
            trials.addData('irregPr_SEQvis3',stop(mainList,a2,b2,c2,False,ran))
            trials.addData('irregPr_Speed',ran)
            trials.addData('irregPr_Pattern',mainInterval-1)
            trials.addData('irregPr_Diff',difFinder(mainList[a2]))
            trials.addData('irregPr_Color',mainList[a2][3])
        else:
            trials.addData('irregSEQvis1',mainList[a2][b2][c2])
            trials.addData('irregNumberOfIntervals',mainList[a2][b2])
            trials.addData('irregSEQvis3',stop(mainList,a2,b2,c2,False,ran))
            trials.addData('irregSpeed',ran)
            trials.addData('irregPattern',mainInterval-1)
            trials.addData('irregDiff',difFinder(mainList[a2]))
            trials.addData('irregColor',mainList[a2][3])
      End Routine:
        if isPractice == False:
            if c2<mainInterval-1:
                c2+=1
            else:
                c2=0
                if b2<2:
                    b2+=1
                else:
                    b2=0
                    if a2<25:
                        a2+=1
                        if mainList[a2][3] == "green":
                            ran=randint(1,4)
                            print(ran,"Attention Check")
                        else:
                            ran=getRandomVis()
                            print(ran)
        else:
            if c2<mainInterval-1:
                c2+=1
            else:
                c2=0
                if b2<2:
                    b2+=1
                else:
                    b2=0
                    if a2<25:
                        a2+=1
                        ran=randint(1,4)
                        print(ran,"Practice")
  Routine IrregVis
    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)

        if mainList[a2][3]=='black':
            allowedkeys2=['1','2','3']
        else:
            allowedkeys2=[]
    PolygonComponent polygon_2
      fillColor [set every repeat] = $mainList[a2][3]
      lineColor [set every repeat] = $mainList[a2][3]
      ori [set every repeat] = rotation(mainInterval)[c2]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $durationn(mainInterval)[c2]
      stopVal [duration (s)] = $stop(mainList,a2,b2,c2,False,ran)
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  Routine RegVis
    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True) #this is for starting the fixation cross
        if mainList[a][3]=='black':
            allowedkeys=['1','2','3']
        else:
            allowedkeys=[]
    PolygonComponent polygon
      fillColor [set every repeat] = $mainList[a][3]
      lineColor [set every repeat] = $mainList[a][3]
      ori [set every repeat] = rotation(mainInterval)[c]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $durationn(mainInterval)[c]
      stopVal [duration (s)] = $stop(mainList,a,b,c,False,ran)
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  Routine SDvis
    CodeComponent code_47
      Code Type = Auto->JS
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      Begin Routine:
        if mainList[a3][3]=='black':
            allowedkeys3=['1','2','3']
        else:
            allowedkeys3=[]
    PolygonComponent polygon_3
      fillColor [set every repeat] = $mainList[a3][3]
      lineColor [set every repeat] = $mainList[a3][3]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = ACsdvis()
      stopVal [duration (s)] = $stop(mainList,a3,b3,c3,False,ran)
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  Routine code2SDvis
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials_5.addData('Pr_SDinterval',mainList[a3][b3][c3])
            trials_5.addData('Pr_SDvis2',stop(mainList,a3,b3,c3,False,ran))
            trials_5.addData('Pr_SDspeed',ran)
            trials_5.addData('Pr_SDDiff',difFinder(mainList[a3]))
            trials_5.addData('Pr_SDColor',mainList[a3][3])
        else:
            trials_5.addData('SDinterval',mainList[a3][b3][c3])
            trials_5.addData('SDvis2',stop(mainList,a3,b3,c3,False,ran))
            trials_5.addData('SDspeed',ran)
            trials_5.addData('SDDiff',difFinder(mainList[a3]))
            trials_5.addData('SDColor',mainList[a3][3])
      End Routine:
        if isPractice == False:
            if b3<2:
                b3+=1
            else:
                b3=0
                if a3<22:
                    a3+=1
                    if mainList[a3][3] == "green":
                        ran=randint(1,4)
                        print(ran,"Attention Check")
                    else:
                        ran=getRandomSD()
                        print(ran)
        else:
            if b3<2:
                b3+=1
            else:
                b3=0
                if a3<22:
                    a3+=1
                    ran=randint(1,4)
                    print(ran,"Practice")
  Routine questionSDvis
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False
      End Routine:
        if a3 > SDVisPracReps - 1 and isPractice == True:
            a3 = 0
            b3 = 0
            c3 = 0
            isPractice = False
            showIntro = True
            ran = getRandomSD()
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent main_key_resp_visSD
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine random2
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        counter=counter+1

        if counter == 4:
            restcounter=1
        else:
            restcounter=0
  Routine questionSecVis1
    CodeComponent keyResCode
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False

        cross.setAutoDraw(False) #this is for ending the fixation cross
      End Routine:
        if a > regVisPracReps - 1 and isPractice == True:
            a = 0
            b = 0
            c = 0
            isPractice = False
            showIntro = True
            ran = getRandomVis()
            print(ran)
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent main_key_resp_visReg
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine questionaudreg
    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        #if continuePlaying == False:
        #    continueRoutine = False
        #cross.setAutoDraw(False)
      End Routine:
        #if count==9:
        #    audregMain.finished=True
        count+=1
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent main_key_resp_audReg
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine questionaudirreg
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent main_key_resp_audIrreg
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
      End Routine:
        countirreg+=1
  Routine questionaudSD
    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Routine:
        #if continuePlaying == False:
        #    continueRoutine = False
        #cross.setAutoDraw(False)
      End Routine:
        countsd+=1
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First stimulus  >  Key "1"
        Second stimulus  >  Key "2"
        Third stimulus  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent main_key_resp_audSD
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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
  Routine sound_volset
    SoundComponent sound_4
      sound [set every repeat] = $volstandard
      startVal [time (s)] = 0.5
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    SoundComponent sound_9
      sound [set every repeat] = $volstandard
      startVal [time (s)] = 5
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    SoundComponent sound_10
      sound [set every repeat] = $voldeviant
      startVal [time (s)] = 9.5
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  Routine volset
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Volume Setting

        First, we will play an example of the audio patterns to allow you to adjust your volume to a comfortable level.

        You can use the keys Windows+PageDown and Windows+PageUp (labeled with green color on the keyboard) to decrease or increase the volume.

        Press on the “space bar” to hear the audio, and adjust your volume to a comfortable level.
    KeyboardComponent key_resp_7
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine introVisReg
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False
    TextComponent text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introVisIrreg
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False
    TextComponent text_9
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introVisSD
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False
    TextComponent text_10
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp_9
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mainIntro
    TextComponent text_14
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you for agreeing to participate. Throughout the study we will ask you to listen to tones or watch the squares on the screen or feel vibrations by holding a cellphone on your hand. The experiment includes 9 blocks in total (in either auditory or visual or tactile modalities), and will take approximately 75 minutes

        Each block begins with six practice trials and is followed by the main trials.The answers you provide for the practice trials at the start of each block will not be analyzed. Only the answers you provide for the main trials will be reviewed and analyzed.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introWithdraw
    TextComponent text_15
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        If you wish to withdraw your participation, you can do so at any time by pressing the escape key on your keyboard two times.

        If you choose to exit the experiment, you cannot continue at a later time.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pcode
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainInterval = len(pListVisReg[a][b])
            mainList = pListVisReg
            if mainList[a][3]=='green':
                visregACintro = 1
            else:
                visregACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = list1
                listUpdated = True
            mainInterval = len(list1[a][b])
  Routine visPrep
    CodeComponent visPrepCode
      Code Type = Auto->JS
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      Begin Routine:
        introText = """Visual Sequence _ Main Trials*

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 7 minutes and cannot be repeated.

        Press on the “space bar” to continue."""
        pIntroText = """Visual Sequence _ Practice Trials*

        You will see three sequences of flashing squares on the screen. Each sequence consists of a square rotating in a timing pattern. The timing pattern of one of these sequences is different from the other two.

        After seeing all three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block.Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue."""
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        isPractice = True
        intro_text = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        regVisPracReps = 6
        regVisReps = 24
        ran = randint(1,4)
  Routine questionPracVisReg
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False

        cross.setAutoDraw(False) #this is for ending the fixation cross
    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent pr_key_resp_visReg
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine visIrregPrep
    CodeComponent visIrregPrepCode
      Code Type = Auto->JS
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      Begin Routine:
        introText = """Visual Sequence _ Main Trials

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 7 minutes and cannot be repeated.

        Press on the “space bar” to continue."""
        pIntroText = """Visual Sequence _ Practice Trials

        You will see three sequences of flashing squares on the screen. Each sequence consists of a square rotating in a timing pattern. The timing pattern of one of these sequences is different from the other two.

        After seeing all three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block.Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue."""
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        ran = randint(1,4)
        isPractice = True
        intro_text2 = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        irregVisPracReps = 6
        irregVisReps = 24
  Routine visIrregCode
    CodeComponent vis_irreg_code
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainInterval = len(pListVisIrreg[a2][b2])
            mainList = pListVisIrreg
            if mainList[a2][3]=='green':
                visirregACintro = 1
            else:
                visirregACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = list2
                listUpdated = True
            mainInterval = len(list2[a2][b2])
  Routine questionPracVisIrreg
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False

        cross.setAutoDraw(False)
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent pr_key_resp_visIrreg
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine visSDcode
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainInterval = len(pListVisSD[a3][b3])
            mainList = pListVisSD
            if mainList[a3][3]=='green':
                visSdACintro = 1
            else:
                visSdACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = listSD
                listUpdated = True
            mainInterval = len(listSD[a3][b3])
  Routine visSDprep
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        introText  = """Visual Single Duration _ Main Trials

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 3 minutes and cannot be repeated.

        Press on the “space bar” to continue."""
        pIntroText = """Visual Single Duration _ Practice Trials

        You will see a square appear three times. One time the square will appear for a different length of time than the other two times.

        After the three presentations of the square, you will be asked which presentation was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block.Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue."""
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        ran = randint(1,4)
        isPractice = True
        intro_text = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        SDVisPracReps = 6
        SDVisReps = 21
  Routine questionSDvisPrac
    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False
    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent pr_key_resp_visSD
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine questionPracAudReg
    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent pr_key_resp_audReg
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_48
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
      End Routine:
        #countregpitch+=1
        #print(f"counter is {countregpitch}")
        #if countregpitch==2:
        #    regpitchreps=1
        #else:
        #    regpitchreps=0
  Routine questionAudIrregPrac
    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent pr_key_resp_audIrreg
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_71
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
  Routine questionAudSDPrac
    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent pr_key_resp_audSD
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_76
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
  Routine headphone
    TextComponent text_17
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Attention!

        Do not remove the provided headphones until the end of the experiment.

        Please put on the headphones, and press on the “space bar” to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Psoundreg
    CodeComponent code_67
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_1
      sound [set every repeat] = $pLIST2[VAR]
      startVal [time (s)] = 1
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  Routine Psleepaudreg
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
      End Routine:
        trials_11.addData('PRegAud',pLIST2[VAR])
        trials_11.addData('audregattention',audregattention)

        for i in range(0,3):
            if 'd-ms' in pLIST2[VAR]:
                trials_11.addData('Pdiff_reg',VAR+1)
            else:
                trials_11.addData('Pdiff_reg',0)

        VAR+=1

        if audregattention == 0:
            allowedkeys4 = ['1','2','3']
        else:
            allowedkeys4 = []

        #
        #cont=0
        #p=shuffle([0,0,0,1,1])
    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine PintroAudReg
    TextComponent text_11
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Auditory Sequence _ Practice Trials*

        You will hear three auditory sequences. The timing pattern of one of these sequences is different from the other two.

        After hearing all three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block. Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PaudRegCode
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        pLIST2=[pstandard,pstandard,pdevient]
        shuffle(pLIST2)
        VAR=0
  Routine introAudReg
    TextComponent text_19
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Auditory Sequence _ Main Trials*

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 7 minutes and cannot be repeated.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine soundreg
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        #if continuePlaying == False:
        #    continueRoutine = False
        #cross.setAutoDraw(True)
    SoundComponent sound_7
      sound [set every repeat] = $LIST2[soundVar]
      startVal [time (s)] = 1
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  Routine sleepaudreg
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        #if continuePlaying == False:
        #    continueRoutine = False
        #cross.setAutoDraw(True)
      End Routine:
        #if continuePlaying == True:
        trials_21.addData('RegAudSequence',LIST2[soundVar])
        for i in range(0,3):
            if 'd-ms' in LIST2[soundVar]:
                trials_21.addData('diff_reg',soundVar+1)
            else:
                trials_21.addData('diff_reg',0)
        soundVar+=1


        if count == audregACran1 or count == audregACran2:
            cc1=1
        else:
            cc1=0
    TextComponent text_37
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine audregcode
    CodeComponent code_24
      Code Type = Both
      Begin Experiment:
        count=0
        playedReg = []

        audregACran1=randint(6,10)
        audregACran2=randint(14,18)


        count1=0
        count2=0
        count3=0
      Begin JS Experiment:
        count = 0;
        playedReg = [];
        audregACran1 = randint(8, 12);
        audregACran2 = randint(18, 22);
        count1 = 0;
        count2 = 0;
        count3 = 0;
      Begin JS Routine:
        LIST2 = [standard, standard, devient];
        maxRes = 10;
        function findDev(l) {
            return l.index(devient);
        }
        function check(maxRes, l) {
            var d;
            [count1, count2, count3];
            shuffle(l);
            d = findDev(l);
            if ((d === 0)) {
                if ((count1 < maxRes)) {
                    count1 += 1;
                    return l;
                } else {
                    return check(maxRes, l);
                }
            } else {
                if ((d === 1)) {
                    if ((count2 < maxRes)) {
                        count2 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                } else {
                    if ((count3 < maxRes)) {
                        count3 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                }
            }
        }
        check(maxRes, LIST2);
        console.log(`count1 is ${count1}`);
        console.log(`count2 is ${count2}`);
        console.log(`count3 is ${count3}`);
        soundVar = 0;
      Begin Routine:
        LIST2=[standard,standard,devient]
        maxRes = 8
        #seqs = 30
        #this code is for counterbalancing the deviant version
        def findDev(l):
            return l.index(devient)

        def check(maxRes,l):
            global count1,count2,count3
            shuffle(l)
            d = findDev(l)
            if(d == 0):
                if(count1 < maxRes):
                    count1 += 1
                    return l
                else:
                    return check(maxRes,l)
            elif(d == 1):
                if(count2 < maxRes):
                    count2 += 1
                    return l
                else:
                    return check(maxRes,l)
            else:
                if(count3 < maxRes):
                    count3 += 1
                    return l
                else:
                    return check(maxRes,l)

        #for i in range(0,seqs):
        check(maxRes,LIST2)
        print(f'count1 is {count1}')
        print(f'count2 is {count2}')
        print(f'count3 is {count3}')


        soundVar = 0
        #fText = f"selected row is {LIST2[soundVar]}\n"
        #this part is for preventing the rhyhm with the same number be played again
        #getRow is a number like 23, 5 etc.

        #def getRow(s):
        #    splited = s.split("RegPatterns/",1)
        #    f = splited[1].split("-ms")
        #    return f[0]
        #
        #continuePlaying = True
        #if(getRow(standard) in playedReg):
        #    #fText += f"{getRow(standard)}  is in the array, Skipping"
        #    continuePlaying = False
        #else:
        #    playedReg.append(getRow(standard))
        #    count  += 1


        #fText += f"{getRow(standard)}  is not in the array playing {getRow(standard)}"

        #fText += f"\n Array is {playedReg}"
  Routine Psoundirreg
    CodeComponent code_70
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_2
      sound [set every repeat] = $pLIST[pirregVAR]
      startVal [time (s)] = 1
      syncScreenRefresh = False
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  Routine PaudIrregCode
    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Routine:
        pLIST=[PirregStandard,PirregStandard,PirregDeviant]
        shuffle(pLIST)
        pirregVAR=0
  Routine PintroAudIrreg
    TextComponent text_12
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Auditory Sequence _ Practice Trials

        You will hear three auditory sequences. The timing pattern of one of these sequences is different from the other two.

        After hearing all three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block. Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine soundirreg
    CodeComponent code_72
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_12
      sound [set every repeat] = $LIST[soundVarirreg]
      startVal [time (s)] = 1
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  Routine Psleepaudirreg
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
      End Routine:
        trials_13.addData('PIrregAud',pLIST[pirregVAR])

        for i in range(0,3):
            if 'd-nm' in pLIST[pirregVAR]:
                trials_13.addData('Pdiff_irreg',pirregVAR+1)
            else:
                trials_13.addData('Pdiff_irreg',0)
        pirregVAR+=1

        if attentionIrreg == 0:
            allowedkeys5 = ['1','2','3']
        else:
            allowedkeys5 = []
    TextComponent text_38
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine introaudirreg
    TextComponent text_20
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Auditory Sequence _ Main Trials

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 7 minutes and cannot be repeated.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audirregcode
    CodeComponent code_29
      Code Type = Both
      Begin Experiment:
        countirreg=0
        playedIrreg = []

        audirregACran1=randint(6,10)
        audirregACran2=randint(14,18)

        countirreg1=0
        countirreg2=0
        countirreg3=0
      Begin JS Experiment:
        countirreg = 0;
        playedIrreg = [];
        audirregACran1 = randint(8, 12);
        audirregACran2 = randint(18, 22);
        countirreg1 = 0;
        countirreg2 = 0;
        countirreg3 = 0;
      Begin JS Routine:
        LIST = [irreg_standard, irreg_standard, irreg_deviant];
        maxRes = 10;
        function findDev(l) {
            return l.index(irreg_deviant);
        }
        function check(maxRes, l) {
            var d;
            [countirreg1, countirreg2, countirreg3];
            shuffle(l);
            d = findDev(l);
            if ((d === 0)) {
                if ((countirreg1 < maxRes)) {
                    countirreg1 += 1;
                    return l;
                } else {
                    return check(maxRes, l);
                }
            } else {
                if ((d === 1)) {
                    if ((countirreg2 < maxRes)) {
                        countirreg2 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                } else {
                    if ((countirreg3 < maxRes)) {
                        countirreg3 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                }
            }
        }
        check(maxRes, LIST);
        soundVarirreg = 0;
      Begin Routine:
        LIST=[irreg_standard,irreg_standard,irreg_deviant]

        maxRes = 8
        #seqs = 30
        #this code is for counterbalancing the deviant version
        def findDev(l):
            return l.index(irreg_deviant)

        def check(maxRes,l):
            global countirreg1,countirreg2,countirreg3
            shuffle(l)
            d = findDev(l)
            if(d == 0):
                if(countirreg1 < maxRes):
                    countirreg1 += 1
                    return l
                else:
                    return check(maxRes,l)
            elif(d == 1):
                if(countirreg2 < maxRes):
                    countirreg2 += 1
                    return l
                else:
                    return check(maxRes,l)
            else:
                if(countirreg3 < maxRes):
                    countirreg3 += 1
                    return l
                else:
                    return check(maxRes,l)

        #for i in range(0,seqs):
        check(maxRes,LIST)
        #    print(List)


        soundVarirreg = 0
        #fText = f"selected row is {LIST2[soundVar]}\n"
        #this part is for preventing the rhyhm with the same number be played again
        #getRow is a number like 23, 5 etc.

        #def getRow(s):
        #    splited = s.split("IrregPatterns/",1)
        #    f = splited[1].split("-nm")
        #    return f[0]
        #
        #continuePlaying = True
        #if(getRow(irreg_standard) in playedIrreg):
        #    #fText += f"{getRow(standard)}  is in the array, Skipping"
        #    continuePlaying = False
        #else:
        #    playedIrreg.append(getRow(irreg_standard))
        #    countirreg  += 1
            #fText += f"{getRow(standard)}  is not in the array playing {getRow(standard)}"

        #fText += f"\n Array is {playedReg}"
  Routine sleepaudirreg
    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Routine:
        #if continuePlaying == False:
        #    continueRoutine = False
        #cross.setAutoDraw(True)
      End Routine:
        #if continuePlaying == True:
        trials_18.addData('IrregAudSequence',LIST[soundVarirreg])
        for i in range(0,3):
            if 'd-nm' in LIST[soundVarirreg]:
                trials_18.addData('diff_irreg',soundVarirreg+1)
            else:
                trials_18.addData('diff_irreg',0)
        soundVarirreg+=1

        if countirreg == audirregACran1 or countirreg == audirregACran2:
            cc2=1
        else:
            cc2=0
    TextComponent text_39
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pSDaud
    CodeComponent code_75
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_3
      sound [set every repeat] = $pLISTsd[VARsd]
      startVal [time (s)] = 1.5
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  Routine PsleepSDaud
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
      End Routine:
        trials_15.addData('PSDAud',pLISTsd[VARsd])
        for i in range(0,3):
            if 'd-sd' in pLISTsd[VARsd]:
                trials_15.addData('Pdiff_sd',VARsd+1)
            else:
                trials_15.addData('Pdiff_sd',0)
        VARsd+=1

        if attentionSD == 0:
            allowedkeys6 = ['1','2','3']
        else:
            allowedkeys6 = []
  Routine PaudSDcode
    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        pLISTsd=[Psd_standard,Psd_standard,Psd_deviant]
        shuffle(pLISTsd)
        VARsd=0
  Routine PintroAudSD
    TextComponent text_13
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text [set every frame]:
        Auditory Single Duration _ Practice Trials

        You will hear three tones. One time the tone will continue for a different length of time than the other two times.

        After the three presentations of the tones, you will be asked which tone length was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block. Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SDaud
    CodeComponent code_77
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_15
      sound [set every repeat] = $LISTsd[soundVarsd]
      startVal [time (s)] = 1.5
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  Routine sleepSDaud
    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        #if continuePlaying == False:
        #    continueRoutine = False
        #cross.setAutoDraw(True)
      End Routine:
        #if continuePlaying == True:
        trials_19.addData('SDaud',LISTsd[soundVarsd])
        for i in range(0,3):
            if 'd-sd' in LISTsd[soundVarsd]:
                trials_19.addData('diff_sd',soundVarsd+1)
            else:
                trials_19.addData('diff_sd',0)
        soundVarsd+=1

        if countsd == audSDACran1 or countsd == audSDACran2:
            cc3=1
        else:
            cc3=0
  Routine audSDcode
    CodeComponent code_32
      Code Type = Both
      Begin Experiment:
        countsd=0
        playedRegsd = []

        audSDACran1=randint(5,9)
        audSDACran2=randint(12,16)

        countSD1=0
        countSD2=0
        countSD3=0
      Begin JS Experiment:
        countsd = 0;
        playedRegsd = [];
        audSDACran1 = randint(11, 17);
        audSDACran2 = randint(25, 31);
        countSD1 = 0;
        countSD2 = 0;
        countSD3 = 0;
      Begin JS Routine:
        LISTsd = [sd_standard, sd_standard, sd_deviant];
        maxRes = 14;
        function findDev(l) {
            return l.index(sd_deviant);
        }
        function check(maxRes, l) {
            var d;
            [countSD1, countSD2, countSD3];
            shuffle(l);
            d = findDev(l);
            if ((d === 0)) {
                if ((countSD1 < maxRes)) {
                    countSD1 += 1;
                    return l;
                } else {
                    return check(maxRes, l);
                }
            } else {
                if ((d === 1)) {
                    if ((countSD2 < maxRes)) {
                        countSD2 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                } else {
                    if ((countSD3 < maxRes)) {
                        countSD3 += 1;
                        return l;
                    } else {
                        return check(maxRes, l);
                    }
                }
            }
        }
        check(maxRes, LISTsd);
        soundVarsd = 0;
      Begin Routine:
        LISTsd=[sd_standard,sd_standard,sd_deviant]

        maxRes = 7
        #seqs = 42
        #this code is for counterbalancing the deviant version
        def findDev(l):
            return l.index(sd_deviant)

        def check(maxRes,l):
            global countSD1,countSD2,countSD3
            shuffle(l)
            d = findDev(l)
            if(d == 0):
                if(countSD1 < maxRes):
                    countSD1 += 1
                    return l
                else:
                    return check(maxRes,l)
            elif(d == 1):
                if(countSD2 < maxRes):
                    countSD2 += 1
                    return l
                else:
                    return check(maxRes,l)
            else:
                if(countSD3 < maxRes):
                    countSD3 += 1
                    return l
                else:
                    return check(maxRes,l)

        #for i in range(0,seqs):
        check(maxRes,LISTsd)
        #    print(List)


        soundVarsd = 0
        #fText = f"selected row is {LIST2[soundVar]}\n"
        #this part is for preventing the rhyhm with the same number be played again
        #getRow is a number like 23, 5 etc.

        #def getRow(s):
        #    splited = s.split("singleDurations/",1)
        #    f = splited[1].split("-sd")
        #    return f[0]

        #continuePlaying = True
        #if(getRow(sd_standard) in playedRegsd):
        #    #fText += f"{getRow(standard)}  is in the array, Skipping"
        #    continuePlaying = False
        #else:
        #    playedRegsd.append(getRow(sd_standard))
        #    countsd  += 1
            #fText += f"{getRow(standard)}  is not in the array playing {getRow(standard)}"

        #fText += f"\n Array is {playedReg}"
  Routine introAudSD
    TextComponent text_22
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Auditory Single Duration Judgment _ Main Trials

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 3 minutes and cannot be repeated.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_26
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you! You have finished all the tasks. Now examiner will ask you to complete a short demographic and music-related questionnaire.

        Press on the “space bar” to end the experiment.
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine headphoneSetupCheck
    TextComponent text_28
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Please type in the numbers you just heard. 
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    KeyboardComponent key1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Secondkey
    KeyboardComponent key2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thirdkey
    KeyboardComponent key3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine humanVoice
    CodeComponent code_43
      Code Type = Auto->JS
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      Begin Routine:
        correctkey="""Thank you!"""
        incorrectkey="""The numbers you entered were not correct.

        Please listen again and type in what you hear."""
        #keystext=""
    SoundComponent sound_17
      sound = four-one-one.wav
      startVal [time (s)] = 1
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  Routine keycheck
    CodeComponent code_42
      Code Type = Auto->JS
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      End Routine:
        if key1.keys=='4' and key2.keys=='1' and key3.keys=='1':
            outerloop.finished=True
            keystext=correctkey
            keysStop=1
        else:
            keystext=incorrectkey
            keysStop=5
  Routine key_text
    TextComponent text_30
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = keysStop
      text [set every frame] = $keystext
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  Routine visregACintro_4
    TextComponent text_34
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you see a green square on the screen, like the one in the next trial, make sure to press on the “G” key instead of 1, 2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine vissdACintro
    TextComponent text_35
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you see a green square on the screen, like the one in the next trial, make sure to press on the “G” key instead of 1, 2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine visirregACintroo
    TextComponent text_31
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you see a green square on the screen, like the one in the next trial, make sure to press on the “G” key instead of 1, 2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audregAC
    CodeComponent code_68
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_5
      sound [set every repeat] = $RegStandardPitch
      startVal [time (s)] = 1.5
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  Routine audregACQues
    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent keyACaudreg
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    CodeComponent code_69
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
  Routine audregACintro
    KeyboardComponent visregAttentionCheck
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_29
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment, whenever you hear a long noise like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
  Routine audirregACintro
    TextComponent text_33
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment, whenever you hear a long noise like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audSDACintro
    TextComponent text_32
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment, whenever you hear a long noise like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audirregAC
    CodeComponent code_73
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_13
      sound [set every repeat] = $IrregStandardPitch
      startVal [time (s)] = 1.5
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  Routine audirregACques
    CodeComponent code_74
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
    KeyboardComponent key_resp_6
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
  Routine audSDAC
    CodeComponent code_78
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(True)
    SoundComponent sound_16
      sound [set every repeat] = $SDstandardPitch
      startVal [time (s)] = 1.5
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  Routine audSDACques
    CodeComponent code_79
      Code Type = Auto->JS
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      Begin Routine:
        #cross.setAutoDraw(False)
    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent key_resp_16
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine TacPrep
    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        introText = """Tactile Sequence _ Main Trials*

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 7 minutes and cannot be repeated.

        Press on the “space bar” to continue."""
        pIntroText = """Tactile Sequence _ Practice Trials*

        Please put your four fingertips on the vibration device. You will feel vibrations in the form of three sequences. The timing pattern of one of these sequences is different from the other two.

        After receiving all the three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the main trials.Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue."""
        #bg_music.play()
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        ran = randint(1,4)
        isPractice = True
        intro_text = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        TacPracReps = 6
        TacReps =24
  Routine tacCode
    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainInterval = len(pListTact[at][bt])
            mainList = pListTact
            if mainList[at][0][0]==10:
                tactregACintro = 1
            else:
                tactregACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = listTact
                listUpdated = True
            mainInterval = len(listTact[at][bt])
  Routine introTact
    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False
    TextComponent text_43
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactSignalSend
    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Routine:
        import requests
        #url = 'https://li119-20.members.linode.com:3080'
        url = 'https://172-105-76-206.ip.linodeusercontent.com:3080'
        seq = copy.copy(mainList[at])
        myobj = {'seq': seq, 'ran':ran}
        headers = {
          'Content-Type': 'application/json',
        }
        response = requests.post(url, headers=headers, json=myobj)

        def totalTime(List,r,count): # the time the shape will remain on screen. Actual code > totalTime(mainList[at],ran,repetitionn(mainInterval))
            finalTime = 0
            if List[0][0] == 10:
                return 5.5
            else:
                for i in range(len(List)):
                    for v in List[i]:
                        finalTime += dur(v,r)
                return finalTime + 5.5 + (count*0.06) #4 for two 2 secs between seqs and 0.5 before starting the trial

        def dur(n,r): #function to get the length of each one of those single durations
            ints = [0,0.23,0.25,0.27]
            return (n*ints[r]) - 0.06

        signal_text = f"Sending Signal {mainList[at]} rep: {repetitionn(mainInterval)}\n\na={at}\nb={bt}\nc={ct}\nTotal Time: {totalTime(mainList[at],ran,repetitionn(mainInterval))}"
      End Routine:
        #if at >= TacReps+1:
        #   bg_music.stop()
    TextComponent text_49
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = totalTime(mainList[at],ran,repetitionn(mainInterval))
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  Routine tactRepHandler
    CodeComponent code_49
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials_16.addData('Pr_Tact1',mainList[at][bt][ct])
            trials_16.addData('Prtact_NumberOfIntervals',mainList[at][bt])
            trials_16.addData('Pr_Tact3',stop(mainList,at,bt,ct,False,ran))
            trials_16.addData('Pr_Speed',ran)
            trials_16.addData('Pr_Pattern',mainInterval-1)
            trials_16.addData('Pr_tact_Diff',difFinder(mainList[at]))
        else:
            trials_16.addData('Tact1',mainList[at][bt][ct])
            trials_16.addData('Tact-NumberOfIntervals',mainList[at][bt])
            trials_16.addData('Tact3',stop(mainList,at,bt,ct,False,ran))
            trials_16.addData('tact_Speed',ran)
            trials_16.addData('tact_Pattern',mainInterval-1)
            trials_16.addData('Tact_Diff',difFinder(mainList[at]))
      End Routine:
        if isPractice == True:
            if ct<mainInterval-1:
                ct+=1
            else:
                ct=0
                if bt<2:
                    bt+=1
                else:
                    bt=0
                    if at<25:
                        at+=1
                        ran=randint(1,4)
                        print(ran,"Practice")
        else:
            if ct<mainInterval-1:
                ct+=1
            else:
                ct=0
                if bt<2:
                    bt+=1
                else:
                    bt=0
                    if at<25:
                        at+=1
                        if mainList[at][0][0] == 10:
                            ran=randint(1,4)
                            print(ran,"Attention Check")
                        else:
                            ran=getRandomVis()
                            print(ran)
  Routine tactPracQuestion
    CodeComponent code_51
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False
    TextComponent text_45
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"


        If you are not sure, please guess.
    KeyboardComponent key_resp_25
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactQuestion
    CodeComponent code_52
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False
      End Routine:
        if at > TacPracReps - 1 and isPractice == True:
            at = 0
            bt = 0
            ct = 0
            isPractice = False
            showIntro = True
            ran=getRandomVis()
    TextComponent text_46
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"


        If you are not sure, please guess.
    KeyboardComponent key_resp_26
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactRegACintro
    TextComponent text_47
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you feel a long vibration like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactIrregPrep
    CodeComponent code_53
      Code Type = Auto->JS
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      Begin Routine:
        introText = """Tactile Sequence _ Main Trials

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 7 minutes and cannot be repeated.

        Press on the “space bar” to continue."""
        pIntroText = """Tactile Sequence _ Practice Trials

        Please put your four fingertips on the vibration device. You will feel vibrations in the form of three sequences. The timing pattern of one of these sequences is different from the other two.

        After receiving all the three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the main trials.Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue."""
        #bg_music.play()
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        ran = randint(1,4)
        isPractice = True
        intro_text = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        TacIrregPracReps = 6
        TacIrregReps = 24
  Routine tactIrregCode
    CodeComponent code_54
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainInterval = len(pListTactIrreg[at2][bt2])
            mainList = pListTactIrreg
            if mainList[at2][0][0]==10:
                tactIrregACintro = 1
            else:
                tactIrregACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = listTact2
                listUpdated = True
            mainInterval = len(listTact2[at2][bt2])
  Routine tactIrregIntro
    CodeComponent code_55
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False
    TextComponent text_48
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactIrregSignalSend
    CodeComponent code_56
      Code Type = Auto->JS
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      Begin Routine:
        import requests
        #url = 'https://li119-20.members.linode.com:3080/' # this is the address of the server
        url = 'https://172-105-76-206.ip.linodeusercontent.com:3080'
        seq = copy.copy(mainList[at2])
        myobj = {'seq': seq, 'ran':ran}  #this is the sequence and ran that is going to be sent to server
        headers = {
          'Content-Type': 'application/json',   # converts everything sent to json
        }
        response = requests.post(url, headers=headers, json=myobj)  # this sent the request to server

        def totalTime(List,r,count): # the time the text will remain on screen. Actual code > totalTime(mainList[at],ran,repetitionn(mainInterval))
            finalTime = 0
            if List[0][0] == 10:
                return 5.5
            else:
                for i in range(len(List)):
                    for v in List[i]:
                        finalTime += dur(v,r)
                return finalTime + 5.5 + (count*0.06) #4 for two 2 secs between seqs and 0.5 before starting the trial

        def dur(n,r): #function to get the length of each one of those single durations
            ints = [0,0.23,0.25,0.27]
            return (n*ints[r]) - 0.06

        signal_text = f"Sending Signal {mainList[at2]} rep: {repetitionn(mainInterval)}\n\na={at2}\nb={bt2}\nc={ct2}\nTotal Time: {totalTime(mainList[at2],ran,repetitionn(mainInterval))}"
      End Routine:
        #if at2 >= TacIrregReps+1:
        #   bg_music.stop()
    TextComponent text_54
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = totalTime(mainList[at2],ran,repetitionn(mainInterval))
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  Routine tactIrregRepHandler
    CodeComponent code_57
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials_28.addData('Pr_TactIrreg1',mainList[at2][bt2][ct2])
            trials_28.addData('Pr_TactIrreg_NumberOfIntervals',mainList[at2][bt2])
            trials_28.addData('Pr_TactIrreg3',stop(mainList,at2,bt2,ct2,False,ran))
            trials_28.addData('Pr_SpeedTactIrreg3',ran)
            trials_28.addData('Pr_PatternTactIrreg3',mainInterval-1)
            trials_28.addData('Pr_irregTact_Diff',difFinder(mainList[at2]))
        else:
            trials_28.addData('TactIrreg1',mainList[at2][bt2][ct2])
            trials_28.addData('TactIrreg_NumberOfIntervals',mainList[at2][bt2])
            trials_28.addData('TactIrreg3',stop(mainList,at2,bt2,ct2,False,ran))
            trials_28.addData('SpeedTactIrreg3',ran)
            trials_28.addData('PatternTactIrreg3',mainInterval-1)
            trials_28.addData('Tact_irreg_Diff',difFinder(mainList[at2]))
      End Routine:
        if isPractice == True:
            if ct2<mainInterval-1:
                ct2+=1
            else:
                ct2=0
                if bt2<2:
                    bt2+=1
                else:
                    bt2=0
                    if at2<25:
                        at2+=1
                        ran=randint(1,4)
                        print(ran,"Practice")
        else:
            if ct2<mainInterval-1:
                ct2+=1
            else:
                ct2=0
                if bt2<2:
                    bt2+=1
                else:
                    bt2=0
                    if at2<25:
                        at2+=1
                        if mainList[at2][0][0] == 10:
                            ran=randint(1,4)
                            print(ran,"Attention Check")
                        else:
                            ran=getRandomVis()
                            print(ran)
  Routine tactIrregPracQuestion
    CodeComponent code_58
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False
    TextComponent text_50
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"


        If you are not sure, please guess.
    KeyboardComponent key_resp_29
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactIrregQuestion
    CodeComponent code_59
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False
      End Routine:
        if at2 > TacIrregPracReps - 1 and isPractice == True:
            at2 = 0
            bt2 = 0
            ct2 = 0
            isPractice = False
            showIntro = True
            ran=getRandomVis()
    TextComponent text_51
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"


        If you are not sure, please guess.
    KeyboardComponent key_resp_30
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactIrregACintro
    TextComponent text_52
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you feel a long vibration like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactSDprep
    CodeComponent code_60
      Code Type = Auto->JS
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      Begin Routine:
        introText = """Tactile Single Duration _ Main Trials

        Now you will continue doing the task you just practiced. Notice that this will be the main part of the experiment and the answers you provide will be analyzed.

        This part of the experiment will last about 3 minutes and cannot be repeated.

        Press on the “space bar” to continue."""
        pIntroText = """Tactile Single Duration _ Practice Trials

        Please put your four fingertips on the vibration device. You will feel vibrations in the form of three single durations. One of these durations will last for a different length of time than the other two.

        After receiving all the three durations, you will be asked which one of them was different from the other two by pressing 1, 2, or 3 on the keyboard.

        First, you will have six practice trials before continuing on to the rest of the trials in the block.Your answers will not be analyzed for these six trials.

        Press on the “space bar” to continue."""
        #bg_music.play()
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0
        ran = randint(1,4)
        isPractice = True
        intro_text = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        TacSDPracReps = 6
        TacSDReps = 21
  Routine tactSDcode
    CodeComponent code_61
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainInterval = len(pListTactSD[at3][bt3])
            mainList = pListTactSD
            if mainList[at3][0]==[10]:
                tactSDACintro = 1
            else:
                tactSDACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = listTactSD
                listUpdated = True
            mainInterval = len(listTactSD[at3][bt3])
  Routine tactSDintro
    CodeComponent code_62
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False;
    TextComponent text_53
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp_32
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tactSDsignalSend
    CodeComponent code_63
      Code Type = Auto->JS
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      Begin Routine:
        import requests
        import time
        #url = 'https://li119-20.members.linode.com:3080/'
        url = 'https://172-105-76-206.ip.linodeusercontent.com:3080'
        seq = copy.copy(mainList[at3])
        myobj = {'seq': seq, 'ran':ran}
        headers = {
          'Content-Type': 'application/json',
        }
        time.sleep(0.5)
        #try:
        #    requests.post(url, headers=headers, json=myobj,timeout=0.00000000001)
        #except requests.exceptions.ReadTimeout:
        #    pass
        response = requests.post(url, headers=headers, json=myobj)

        def totalTime(List,r): # the time the text will remain on screen. Actual code > totalTime(mainList[at],ran,3))
            finalTime = 0
            if List[0] == [10]:
                return 5.5
            else:
                for i in range(len(List)):
                    for v in List[i]:
                        finalTime += dur(v,r)
                return finalTime + 5.5 #4 for two 2 secs between seqs and 0.5 before starting the trial

        def dur(n,r): #function to get the length of each one of those single durations
            ints = [0,0.23,0.25,0.27]
            return (n*ints[r])

        signal_text = f"Sending Signal {mainList[at3]} rep: {repetitionn(mainInterval)}\n\na={at3}\nb={bt3}\nc={ct3}\nTotal Time: {totalTime(mainList[at3],ran)}"
      End Routine:
        #if at3 >= TacSDReps+1:
        #    bg_music.stop()
    TextComponent text_58
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = totalTime(mainList[at3],ran)
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  Routine tactSDrepHandler
    CodeComponent code_64
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials_31.addData('Pr_TactSD1',mainList[at3][bt3][ct3])
            trials_31.addData('TactSD_Pr_NumberOfIntervals',mainList[at3][bt3])
            trials_31.addData('Pr_TactSD3',stop(mainList,at3,bt3,ct3,False,ran))
            trials_31.addData('TactSD_Pr_Speed',ran)
            trials_31.addData('TactSD_Pr_Pattern',mainInterval-1)
            trials_31.addData('Tact_Pr_SDDiff',difFinder(mainList[at3]))
        else:
            trials_31.addData('TactSD1',mainList[at3][bt3][ct3])
            trials_31.addData('TactSD_NumberOfIntervals',mainList[at3][bt3])
            trials_31.addData('TactSD3',stop(mainList,at3,bt3,ct3,False,ran))
            trials_31.addData('TactSD-Speed',ran)
            trials_31.addData('TactSD-Pattern',mainInterval-1)
            trials_31.addData('TactSD_Diff',difFinder(mainList[at3]))
      End Routine:
        if isPractice == True:
            if bt3<2:
                bt3+=1
            else:
                bt3=0
                if at3<22:
                    at3+=1
                    ran=randint(1,4)
        else:
            if bt3<2:
                bt3+=1
            else:
                bt3=0
                if at3<22:
                    at3+=1
                    if mainList[at3][0] == [10]:
                        ran=randint(1,4)
                        print(ran,"Attention Check")
                    else:
                        ran=getRandomSD()
                        print(ran)
  Routine tactSDpracQuestion
    CodeComponent code_65
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False
    TextComponent text_55
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"


        If you are not sure, please guess.
    KeyboardComponent key_resp_33
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine tactSDquesion
    CodeComponent code_66
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False
      End Routine:
        if at3 > TacSDPracReps - 1 and isPractice == True:
            at3 = 0
            bt3 = 0
            ct3 = 0
            isPractice = False
            showIntro = True
            ran = getRandomSD()
    TextComponent text_56
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"


        If you are not sure, please guess.
    KeyboardComponent key_resp_34
      allowedKeys = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine tactSDACintro
    TextComponent text_57
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        During the experiment whenever you feel a long vibration like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_35
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest
    TextComponent text_44
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed about half the experiment. If you want to, you can take a rest for 5 minutes before pressing the "space bar".

        Are you ready to continue doing the experiment?
        Press the "space bar"!
    KeyboardComponent key_resp_36
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine code1_1SeqVis
  Routine mainIntro
  Routine introWithdraw
  Routine headphone
  Routine volset
  LoopInitiator trials_20 loopType="TrialHandler"
    conditions = [{'volstandard': 'RegPatterns/1-ms_2_2_4_1_3_unit250.wav', 'voldeviant': 'RegPatterns/1d-ms_2_2_4_3_1_unit250.wav'}]
    conditionsFile = volset.xlsx
    loopType = random
    nReps = 1
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    Routine sound_volset
  LoopTerminator trials_20
  LoopInitiator outerloop loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine humanVoice
      Routine headphoneSetupCheck
      Routine Secondkey
      Routine thirdkey
    LoopTerminator trials_8
    Routine keycheck
    Routine key_text
  LoopTerminator outerloop
  LoopInitiator trials_7 loopType="TrialHandler"
    loopType = random
    nReps = 9
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    LoopInitiator TactileReg loopType="TrialHandler"
      loopType = random
      nReps = order[counter][0]
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      Routine TacPrep
      LoopInitiator trials_14 loopType="TrialHandler"
        loopType = random
        nReps = TacPracReps + TacReps +2
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        Routine tacCode
        LoopInitiator trials_22 loopType="TrialHandler"
          loopType = random
          nReps = tactregACintro
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          Routine tactRegACintro
        LoopTerminator trials_22
        Routine introTact
        Routine tactSignalSend
        LoopInitiator trials_16 loopType="TrialHandler"
          loopType = random
          nReps = repetitionn(mainInterval)
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          Routine tactRepHandler
        LoopTerminator trials_16
        Routine tactPracQuestion
        Routine tactQuestion
      LoopTerminator trials_14
    LoopTerminator TactileReg
    LoopInitiator TactileIrreg loopType="TrialHandler"
      loopType = random
      nReps = order[counter][1]
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      Routine tactIrregPrep
      LoopInitiator trials_23 loopType="TrialHandler"
        loopType = random
        nReps = TacIrregPracReps + TacIrregReps+2
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        Routine tactIrregCode
        LoopInitiator trials_29 loopType="TrialHandler"
          loopType = random
          nReps = tactIrregACintro
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          Routine tactIrregACintro
        LoopTerminator trials_29
        Routine tactIrregIntro
        Routine tactIrregSignalSend
        LoopInitiator trials_28 loopType="TrialHandler"
          loopType = random
          nReps = repetitionn(mainInterval)
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          Routine tactIrregRepHandler
        LoopTerminator trials_28
        Routine tactIrregPracQuestion
        Routine tactIrregQuestion
      LoopTerminator trials_23
    LoopTerminator TactileIrreg
    LoopInitiator TactileSD loopType="TrialHandler"
      loopType = random
      nReps = order[counter][2]
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      Routine tactSDprep
      LoopInitiator trials_30 loopType="TrialHandler"
        loopType = random
        nReps = TacSDPracReps + TacSDReps+2
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        Routine tactSDcode
        LoopInitiator trials_32 loopType="TrialHandler"
          loopType = random
          nReps = tactSDACintro
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          Routine tactSDACintro
        LoopTerminator trials_32
        Routine tactSDintro
        Routine tactSDsignalSend
        LoopInitiator trials_31 loopType="TrialHandler"
          loopType = random
          nReps = 3
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          Routine tactSDrepHandler
        LoopTerminator trials_31
        Routine tactSDpracQuestion
        Routine tactSDquesion
      LoopTerminator trials_30
    LoopTerminator TactileSD
    LoopInitiator visualReg loopType="TrialHandler"
      loopType = random
      nReps = $order[counter][3]
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      Routine visPrep
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = random
        nReps = $regVisPracReps + regVisReps+2
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        Routine pcode
        LoopInitiator trials_10 loopType="TrialHandler"
          loopType = random
          nReps = visregACintro
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          Routine visregACintro_4
        LoopTerminator trials_10
        Routine introVisReg
        LoopInitiator trials_3 loopType="TrialHandler"
          loopType = random
          nReps = $repetitionn(mainInterval)
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          Routine RegVis
          Routine code1_2SeqVis
        LoopTerminator trials_3
        Routine questionPracVisReg
        Routine questionSecVis1
      LoopTerminator trials_2
    LoopTerminator visualReg
    LoopInitiator visualIrreg loopType="TrialHandler"
      loopType = random
      nReps = $order[counter][4]
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      Routine visIrregPrep
      LoopInitiator trials_4 loopType="TrialHandler"
        loopType = random
        nReps = $irregVisReps + irregVisPracReps+2
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        Routine visIrregCode
        LoopInitiator trials_12 loopType="TrialHandler"
          loopType = random
          nReps = visirregACintro
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          Routine visirregACintroo
        LoopTerminator trials_12
        Routine introVisIrreg
        LoopInitiator trials loopType="TrialHandler"
          loopType = random
          nReps = $repetitionn(mainInterval)
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          Routine IrregVis
          Routine code2_2SeqVis
        LoopTerminator trials
        Routine questionPracVisIrreg
        Routine questionSeqVis2
      LoopTerminator trials_4
    LoopTerminator visualIrreg
    LoopInitiator visualSD loopType="TrialHandler"
      loopType = random
      nReps = $order[counter][5]
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      Routine visSDprep
      LoopInitiator trials_6 loopType="TrialHandler"
        loopType = random
        nReps = $SDVisPracReps + SDVisReps+2
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        Routine visSDcode
        LoopInitiator trials_17 loopType="TrialHandler"
          loopType = random
          nReps = visSdACintro
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          Routine vissdACintro
        LoopTerminator trials_17
        Routine introVisSD
        LoopInitiator trials_5 loopType="TrialHandler"
          loopType = random
          nReps = 3
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          Routine SDvis
          Routine code2SDvis
        LoopTerminator trials_5
        Routine questionSDvisPrac
        Routine questionSDvis
      LoopTerminator trials_6
    LoopTerminator visualSD
    LoopInitiator auditoryReg loopType="TrialHandler"
      loopType = random
      nReps = $order[counter][6]
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      Routine PintroAudReg
      LoopInitiator audregPractice loopType="TrialHandler"
        conditionsFile = practiceReg.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'pstandard': 'RegPatterns/1-ms_2_2_4_1_3_unit250.wav', 'pdevient': 'RegPatterns/1d-ms_2_2_4_3_1_unit250.wav', 'audregattention': 0},
          {'pstandard': 'RegPatterns/8-ms_1_1_2_4_2_2_unit270.wav', 'pdevient': 'RegPatterns/8d-ms_2_1_1_4_2_2_unit270.wav', 'audregattention': 0},
          {'pstandard': 'RegPatterns/17-ms_4_1_1_2_3_1_unit270.wav', 'pdevient': 'RegPatterns/17d-ms_4_1_1_2_1_3_unit270.wav', 'audregattention': 0},
          {'pstandard': 'RegPatterns/25-ms_1_1_1_1_4_3_1_unit250.wav', 'pdevient': 'RegPatterns/25d-ms_1_1_1_1_4_1_3_unit250.wav', 'audregattention': 0},
          {'pstandard': 'RegPatterns/2-ms_3_1_4_1_3_unit250pitch.wav', 'pdevient': 'RegPatterns/2d-ms_3_1_4_3_1_unit250pitch.wav', 'audregattention': 1},
          {'pstandard': 'RegPatterns/7-ms_1_1_2_3_1_4_unit270pitch.wav', 'pdevient': 'RegPatterns/7d-ms_1_1_2_1_3_4_unit270pitch.wav', 'audregattention': 1}]
        Routine PaudRegCode
        LoopInitiator trials_9 loopType="TrialHandler"
          loopType = random
          nReps = audregattention
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          Routine audregACintro
        LoopTerminator trials_9
        LoopInitiator trials_11 loopType="TrialHandler"
          loopType = random
          nReps = nrepAC
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          Routine Psoundreg
          Routine Psleepaudreg
        LoopTerminator trials_11
        Routine questionPracAudReg
      LoopTerminator audregPractice
      Routine introAudReg
      LoopInitiator audregMain loopType="TrialHandler"
        conditionsFile = mainReg.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'standard': 'RegPatterns/1-ms_2_2_4_1_3_unit230.wav', 'devient': 'RegPatterns/1d-ms_2_2_4_3_1_unit230.wav'},
          {'standard': 'RegPatterns/2-ms_3_1_4_1_3_unit250.wav', 'devient': 'RegPatterns/2d-ms_3_1_4_3_1_unit250.wav'},
          {'standard': 'RegPatterns/3-ms_3_1_4_2_2_unit270.wav', 'devient': 'RegPatterns/3d-ms_1_3_4_2_2_unit270.wav'},
          {'standard': 'RegPatterns/4-ms_4_1_3_3_1_unit230.wav', 'devient': 'RegPatterns/4d-ms_4_3_1_3_1_unit230.wav'},
          {'standard': 'RegPatterns/5-ms_4_3_1_1_3_unit250.wav', 'devient': 'RegPatterns/5d-ms_4_1_3_1_3_unit250.wav'},
          {'standard': 'RegPatterns/6-ms_4_3_1_2_2_unit270.wav', 'devient': 'RegPatterns/6d-ms_4_1_3_2_2_unit270.wav'},
          {'standard': 'RegPatterns/7-ms_1_1_2_3_1_4_unit230.wav', 'devient': 'RegPatterns/7d-ms_1_1_2_1_3_4_unit230.wav'},
          {'standard': 'RegPatterns/8-ms_1_1_2_4_2_2_unit250.wav', 'devient': 'RegPatterns/8d-ms_2_1_1_4_2_2_unit250.wav'},
          {'standard': 'RegPatterns/9-ms_2_1_1_1_3_4_unit270.wav', 'devient': 'RegPatterns/9d-ms_2_1_1_3_1_4_unit270.wav'},
          {'standard': 'RegPatterns/10-ms_2_2_2_1_1_4_unit230.wav', 'devient': 'RegPatterns/10d-ms_2_2_1_1_2_4_unit230.wav'},
          {'standard': 'RegPatterns/11-ms_2_2_3_1_1_3_unit250.wav', 'devient': 'RegPatterns/11d-ms_2_2_3_1_3_1_unit250.wav'},
          {'standard': 'RegPatterns/12-ms_3_1_1_3_2_2_unit270.wav', 'devient': 'RegPatterns/12d-ms_3_1_3_1_2_2_unit270.wav'},
          {'standard': 'RegPatterns/13-ms_2_1_1_2_2_4_unit230.wav', 'devient': 'RegPatterns/13d-ms_1_1_2_2_2_4_unit230.wav'}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
        Routine audregcode
        LoopInitiator trials_21 loopType="TrialHandler"
          loopType = random
          nReps = 3
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          Routine soundreg
          Routine sleepaudreg
        LoopTerminator trials_21
        Routine questionaudreg
        LoopInitiator audregACloop loopType="TrialHandler"
          conditions = [{'RegStandardPitch': 'RegPatterns/12-ms_3_1_1_3_2_2_unit230pitch.wav', 'RegDeviantPitch': 'RegPatterns/12d-ms_3_1_3_1_2_2_unit230pitch.wav'}]
          conditionsFile = pitchReg.xlsx
          loopType = random
          nReps = cc1
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          Routine audregAC
          Routine audregACQues
        LoopTerminator audregACloop
      LoopTerminator audregMain
    LoopTerminator auditoryReg
    LoopInitiator auditoryirreg loopType="TrialHandler"
      loopType = random
      nReps = $order[counter][7]
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      Routine PintroAudIrreg
      LoopInitiator audirregPractice loopType="TrialHandler"
        conditionsFile = practiceIrreg.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'PirregStandard': 'IrregPatterns/1-nm_1_1_3_4_3_unit250.wav', 'PirregDeviant': 'IrregPatterns/1d-nm_1_3_1_4_3_unit250.wav', 'attentionIrreg': 0},
          {'PirregStandard': 'IrregPatterns/16-nm_2_2_1_2_4_1_unit250.wav', 'PirregDeviant': 'IrregPatterns/16d-nm_2_2_1_4_2_1_unit250.wav', 'attentionIrreg': 0},
          {'PirregStandard': 'IrregPatterns/19-nm_1_1_1_2_4_1_2_unit270.wav', 'PirregDeviant': 'IrregPatterns/19d-nm_1_1_1_4_2_1_2_unit270.wav', 'attentionIrreg': 0},
          {'PirregStandard': 'IrregPatterns/30-nm_4_1_1_1_2_2_1_unit250.wav', 'PirregDeviant': 'IrregPatterns/30d-nm_1_4_1_1_2_2_1_unit250.wav', 'attentionIrreg': 0},
          {'PirregStandard': 'IrregPatterns/3-nm_2_3_2_4_1_unit250pitch.wav', 'PirregDeviant': 'IrregPatterns/3d-nm_2_3_2_1_4_unit250pitch.wav', 'attentionIrreg': 1},
          {'PirregStandard': 'IrregPatterns/6-nm_4_1_2_3_2_unit230pitch.wav', 'PirregDeviant': 'IrregPatterns/6d-nm_1_4_2_3_2_unit230pitch.wav', 'attentionIrreg': 1}]
        Routine PaudIrregCode
        LoopInitiator trials_24 loopType="TrialHandler"
          loopType = random
          nReps = attentionIrreg
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          Routine audirregACintro
        LoopTerminator trials_24
        LoopInitiator trials_13 loopType="TrialHandler"
          loopType = random
          nReps = nrepAC
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          Routine Psoundirreg
          Routine Psleepaudirreg
        LoopTerminator trials_13
        Routine questionAudIrregPrac
      LoopTerminator audirregPractice
      Routine introaudirreg
      LoopInitiator audirregMain loopType="TrialHandler"
        conditionsFile = mainIrreg.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'irreg_standard': 'IrregPatterns/1-nm_1_1_3_4_3_unit230.wav', 'irreg_deviant': 'IrregPatterns/1d-nm_1_3_1_4_3_unit230.wav'},
          {'irreg_standard': 'IrregPatterns/2-nm_1_3_2_4_2_unit250.wav', 'irreg_deviant': 'IrregPatterns/2d-nm_3_1_2_4_2_unit250.wav'},
          {'irreg_standard': 'IrregPatterns/3-nm_2_3_2_4_1_unit270.wav', 'irreg_deviant': 'IrregPatterns/3d-nm_2_3_2_1_4_unit270.wav'},
          {'irreg_standard': 'IrregPatterns/4-nm_3_3_1_4_1_unit230.wav', 'irreg_deviant': 'IrregPatterns/4d-nm_3_3_4_1_1_unit230.wav'},
          {'irreg_standard': 'IrregPatterns/5-nm_4_1_1_3_3_unit250.wav', 'irreg_deviant': 'IrregPatterns/5d-nm_1_4_1_3_3_unit250.wav'},
          {'irreg_standard': 'IrregPatterns/6-nm_4_1_2_3_2_unit270.wav', 'irreg_deviant': 'IrregPatterns/6d-nm_1_4_2_3_2_unit270.wav'},
          {'irreg_standard': 'IrregPatterns/7-nm_1_3_2_3_2_1_unit230.wav', 'irreg_deviant': 'IrregPatterns/7d-nm_1_2_3_3_2_1_unit230.wav'},
          {'irreg_standard': 'IrregPatterns/8-nm_2_1_4_2_2_1_unit250.wav', 'irreg_deviant': 'IrregPatterns/8d-nm_2_4_1_2_2_1_unit250.wav'},
          {'irreg_standard': 'IrregPatterns/9-nm_2_1_4_3_1_1_unit270.wav', 'irreg_deviant': 'IrregPatterns/9d-nm_2_4_1_3_1_1_unit270.wav'},
          {'irreg_standard': 'IrregPatterns/10-nm_3_2_3_2_1_1_unit230.wav', 'irreg_deviant': 'IrregPatterns/10d-nm_3_2_2_3_1_1_unit230.wav'},
          {'irreg_standard': 'IrregPatterns/11-nm_4_1_2_2_1_2_unit250.wav', 'irreg_deviant': 'IrregPatterns/11d-nm_1_4_2_2_1_2_unit250.wav'}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
        Routine audirregcode
        LoopInitiator trials_18 loopType="TrialHandler"
          loopType = random
          nReps = 3
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          Routine soundirreg
          Routine sleepaudirreg
        LoopTerminator trials_18
        Routine questionaudirreg
        LoopInitiator trials_26 loopType="TrialHandler"
          conditions = [{'IrregStandardPitch': 'IrregPatterns/13-nm_1_2_1_2_3_3_unit270pitch.wav', 'IrregDeviantPitch': 'IrregPatterns/13d-nm_1_2_1_3_2_3_unit270pitch.wav'}]
          conditionsFile = pitchIrreg.xlsx
          loopType = random
          nReps = cc2
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          Routine audirregAC
          Routine audirregACques
        LoopTerminator trials_26
      LoopTerminator audirregMain
    LoopTerminator auditoryirreg
    LoopInitiator auditorySD loopType="TrialHandler"
      loopType = random
      nReps = order[counter][8]
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      Routine PintroAudSD
      LoopInitiator audsdPractice loopType="TrialHandler"
        conditionsFile = practiceSD.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'Psd_standard': 'singleDurations/2-sd_1_unit250.wav', 'Psd_deviant': 'singleDurations/2d-sd_3_unit250.wav', 'attentionSD': 0},
          {'Psd_standard': 'singleDurations/15-sd_3_unit270.wav', 'Psd_deviant': 'singleDurations/15d-sd_4_unit270.wav', 'attentionSD': 0},
          {'Psd_standard': 'singleDurations/25-sd_1.4_unit250.wav', 'Psd_deviant': 'singleDurations/25d-sd_1_unit250.wav', 'attentionSD': 0},
          {'Psd_standard': 'singleDurations/35-sd_3.5_unit270.wav', 'Psd_deviant': 'singleDurations/35d-sd_1.4_unit270.wav', 'attentionSD': 0},
          {'Psd_standard': 'singleDurations/8-sd_2_unit250pitch.wav', 'Psd_deviant': 'singleDurations/8d-sd_3_unit250pitch.wav', 'attentionSD': 1},
          {'Psd_standard': 'singleDurations/21-sd_4_unit230pitch.wav', 'Psd_deviant': 'singleDurations/21d-sd_3_unit230pitch.wav', 'attentionSD': 1}]
        Routine PaudSDcode
        LoopInitiator trials_25 loopType="TrialHandler"
          loopType = random
          nReps = attentionSD
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          Routine audSDACintro
        LoopTerminator trials_25
        LoopInitiator trials_15 loopType="TrialHandler"
          loopType = random
          nReps = nrepAC
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          Routine pSDaud
          Routine PsleepSDaud
        LoopTerminator trials_15
        Routine questionAudSDPrac
      LoopTerminator audsdPractice
      Routine introAudSD
      LoopInitiator audsdMain loopType="TrialHandler"
        conditionsFile = mainSD.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'sd_standard': 'singleDurations/1-sd_1_unit230.wav', 'sd_deviant': 'singleDurations/1d-sd_2_unit230.wav'},
          {'sd_standard': 'singleDurations/2-sd_1_unit250.wav', 'sd_deviant': 'singleDurations/2d-sd_3_unit250.wav'},
          {'sd_standard': 'singleDurations/3-sd_1_unit270.wav', 'sd_deviant': 'singleDurations/3d-sd_4_unit270.wav'},
          {'sd_standard': 'singleDurations/4-sd_1_unit230.wav', 'sd_deviant': 'singleDurations/4d-sd_1.4_unit230.wav'},
          {'sd_standard': 'singleDurations/5-sd_1_unit250.wav', 'sd_deviant': 'singleDurations/5d-sd_3.5_unit250.wav'},
          {'sd_standard': 'singleDurations/6-sd_1_unit270.wav', 'sd_deviant': 'singleDurations/6d-sd_4.5_unit270.wav'},
          {'sd_standard': 'singleDurations/7-sd_2_unit230.wav', 'sd_deviant': 'singleDurations/7d-sd_1_unit230.wav'},
          {'sd_standard': 'singleDurations/8-sd_2_unit250.wav', 'sd_deviant': 'singleDurations/8d-sd_3_unit250.wav'},
          {'sd_standard': 'singleDurations/9-sd_2_unit270.wav', 'sd_deviant': 'singleDurations/9d-sd_4_unit270.wav'},
          {'sd_standard': 'singleDurations/10-sd_2_unit230.wav', 'sd_deviant': 'singleDurations/10d-sd_1.4_unit230.wav'},
          {'sd_standard': 'singleDurations/11-sd_2_unit250.wav', 'sd_deviant': 'singleDurations/11d-sd_3.5_unit250.wav'},
          {'sd_standard': 'singleDurations/12-sd_2_unit270.wav', 'sd_deviant': 'singleDurations/12d-sd_4.5_unit270.wav'},
          {'sd_standard': 'singleDurations/13-sd_3_unit230.wav', 'sd_deviant': 'singleDurations/13d-sd_1_unit230.wav'}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
        Routine audSDcode
        LoopInitiator trials_19 loopType="TrialHandler"
          loopType = random
          nReps = 3
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          Routine SDaud
          Routine sleepSDaud
        LoopTerminator trials_19
        Routine questionaudSD
        LoopInitiator trials_27 loopType="TrialHandler"
          conditions = [{'SDstandardPitch': 'singleDurations/14-sd_3_unit270pitch.wav', 'SDdeviantPitch': 'singleDurations/14d-sd_2_unit270pitch.wav'}]
          conditionsFile = pitchSD.xlsx
          loopType = random
          nReps = cc3
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          Routine audSDAC
          Routine audSDACques
        LoopTerminator trials_27
      LoopTerminator audsdMain
    LoopTerminator auditorySD
    Routine random2
    LoopInitiator trials_33 loopType="TrialHandler"
      loopType = random
      nReps = restcounter
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      Routine Rest
    LoopTerminator trials_33
  LoopTerminator trials_7
  Routine end
