PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = VisTraining
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Routines
  Routine code_js
    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
          thisExp=psychoJS.experiment;
          win=psychoJS.window;
          event=psychoJS.eventManager;
          Array.prototype.append = [].push;
          shuffle = util.shuffle;
          random = Math.random;
          randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
          }
          Array.prototype.index = [].indexOf;
          Array.prototype.insert = function ( index, item ) {

            this.splice( index, 0, item );

          };
  Routine code_2
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        import copy as copy
        #def num1_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.220 * n-0.05)
        #    return float(0.220 * n)
        #
        def num1_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.230 * n-0.05)
            return float(0.230 * n)

        #def num3_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.240 * n-0.05)
        #    return float(0.240 * n)

        def num2_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.250 * n-0.05)
            return float(0.250 * n)

        #def num5_to_sec(n,isaud=False):
        #    if isaud==True:
        #        return float(0.260 * n-0.05)
        #    return float(0.260 * n)

        def num3_to_sec(n,isaud=False):
            if isaud==True:
                return float(0.270 * n-0.05)
            return float(0.270 * n)

        def shuffle_list(List):
        #    global totalShuffle
        #    totalShuffle += 1
            counta=0
            countb=0
            countc=0
            for ii in List:
                shuffle(ii)
                d = difFinder(ii)
                if(d == 1):
                    counta += 1
                elif(d == 2):
                    countb += 1
                elif(d == 3):
                    countc += 1
            if(counta == countb and counta == countc):
                shuffle(List)
                return List
            else:
                return shuffle_list(List)

        def difFinder(i):
            if i[0] != i[1] and i[0] != i[2]:
                return 1;
            if i[1] != i[0] and i[1] != i[2]:
                return 2;
            if i[2] != i[0] and i[2] != i[1]:
                return 3;

        total=[[[4,1,3,3,1,1],[4,1,3,3,1,1],[4,3,1,3,1,1]],
        [[4,3,1,2,2,1],[4,3,1,2,2,1],[4,1,3,2,2,1]],
        [[1,1,2,3,1,4,1],[1,1,2,3,1,4,1],[1,1,2,1,3,4,1]],
        [[2,2,3,1,1,3,1],[2,2,3,1,1,3,1],[2,2,3,1,3,1,1]],
        [[2,1,1,2,2,4,1],[2,1,1,2,2,4,1],[1,1,2,2,2,4,1]],
        [[2,2,1,3,3,1,1],[2,2,1,3,3,1,1],[2,2,1,3,1,3,1]],
        [[4,1,1,2,3,1,1],[4,1,1,2,3,1,1],[4,1,1,2,1,3,1]],
        [[2,1,1,3,1,1,3,1],[2,1,1,3,1,1,3,1],[2,1,1,3,1,3,1,1]],
        [[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1]],
        [[4,2,2,1,1,1,1,1],[4,2,2,1,1,1,1,1],[4,2,1,1,2,1,1,1]],
        [[1,1,2,3,1,1,3,1],[1,1,2,3,1,1,3,1],[1,1,2,3,1,3,1,1]],
        [[2,2,1,1,1,1,4,1],[2,2,1,1,1,1,4,1],[2,1,1,2,1,1,4,1]]]

        total2=[[[1,1,3.5,4.5,3.5,1],[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1]],
        [[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[3.5,1,1.4,4.5,1.4,1]],
        [[1.4,3.5,1.4,4.5,1,1],[1.4,3.5,1.4,4.5,1,1],[1.4,3.5,1.4,1,4.5,1]],
        [[3.5,3.5,1,4.5,1,1],[3.5,3.5,1,4.5,1,1],[3.5,3.5,4.5,1,1,1]],
        [[4.5,1,1,3.5,3.5,1],[4.5,1,1,3.5,3.5,1],[1,4.5,1,3.5,3.5,1]],
        [[4.5,1,1.4,3.5,1.4,1],[4.5,1,1.4,3.5,1.4,1],[1,4.5,1.4,3.5,1.4,1]],
        [[1,3.5,1.4,3.5,1.4,1,1],[1,3.5,1.4,3.5,1.4,1,1],[1,1.4,3.5,3.5,1.4,1,1]],
        [[1.4,1,4.5,1.4,1.4,1,1],[1.4,1,4.5,1.4,1.4,1,1],[1.4,4.5,1,1.4,1.4,1,1]],
        [[1.4,1,4.5,3.5,1,1,1],[1.4,1,4.5,3.5,1,1,1],[1.4,4.5,1,3.5,1,1,1]],
        [[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,1.4,3.5,1,1,1]],
        [[4.5,1,1.4,1.4,1,1.4,1],[4.5,1,1.4,1.4,1,1.4,1],[1,4.5,1.4,1.4,1,1.4,1]],
        [[4.5,1.4,1,3.5,1,1,1],[4.5,1.4,1,3.5,1,1,1],[4.5,1.4,1,1,3.5,1,1]],
        [[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,3.5,1.4,3.5,1]],
        [[1,1.4,1.4,1,4.5,1.4,1],[1,1.4,1.4,1,4.5,1.4,1],[1,1.4,1.4,4.5,1,1.4,1]],
        [[1,1.4,4.5,1,1,3.5,1],[1,1.4,4.5,1,1,3.5,1],[1,1.4,4.5,1,3.5,1,1]],
        [[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,4.5,1.4,1,1]],
        [[1.4,3.5,1,1,1.4,3.5,1],[1.4,3.5,1,1,1.4,3.5,1],[1.4,3.5,1,1,3.5,1.4,1]],
        [[3.5,1.4,1,4.5,1,1,1],[3.5,1.4,1,4.5,1,1,1],[3.5,1.4,1,1,4.5,1,1]],
        [[1,1,1,1.4,4.5,1,1.4,1],[1,1,1,1.4,4.5,1,1.4,1],[1,1,1,4.5,1.4,1,1.4,1]],
        [[1,1,3.5,1.4,1,3.5,1,1],[1,1,3.5,1.4,1,3.5,1,1],[1,1,3.5,1.4,3.5,1,1,1]],
        [[1,1,3.5,1.4,1.4,1,1.4,1],[1,1,3.5,1.4,1.4,1,1.4,1],[1,1,1.4,3.5,1.4,1,1.4,1]],
        [[1.4,1,4.5,1,1.4,1,1,1],[1.4,1,4.5,1,1.4,1,1,1],[1.4,4.5,1,1,1.4,1,1,1]],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1]],
        [[3.5,1,1,3.5,1,1.4,1,1],[3.5,1,1,3.5,1,1.4,1,1],[3.5,1,1,1,3.5,1.4,1,1]],
        [[1,3.5,1,4.5,1,1,1,1],[1,3.5,1,4.5,1,1,1,1],[3.5,1,1,4.5,1,1,1,1]],
        [[1,4.5,1,1,3.5,1,1,1],[1,4.5,1,1,3.5,1,1,1],[1,4.5,1,1,1,3.5,1,1]],
        [[1.4,1,1.4,3.5,1.4,1,1,1],[1.4,1,1.4,3.5,1.4,1,1,1],[1.4,1,1.4,1.4,3.5,1,1,1]],
        [[3.5,1,1,4.5,1,1,1,1],[3.5,1,1,4.5,1,1,1,1],[3.5,1,1,1,4.5,1,1,1]],
        [[3.5,1.4,1.4,1,1,1,1.4,1],[3.5,1.4,1.4,1,1,1,1.4,1],[1.4,3.5,1.4,1,1,1,1.4,1]],
        [[4.5,1,1,1,1.4,1.4,1,1],[4.5,1,1,1,1.4,1.4,1,1],[1,4.5,1,1,1.4,1.4,1,1]]]

        totalSD=[[[1],[1],[2]],[[1],[1],[3]],
        [[1],[1],[4]],[[1],[1],[1.4]],
        [[1],[1],[3.5]],[[1],[1],[4.5]],
        [[2],[2],[1]],[[2],[2],[3]],
        [[2],[2],[4]],[[2],[2],[1.4]],
        [[2],[2],[3.5]],[[2],[2],[4.5]],
        [[3],[3],[1]],[[3],[3],[2]],
        [[3],[3],[4]],[[3],[3],[1.4]],
        [[3],[3],[3.5]],[[3],[3],[4.5]],
        [[4],[4],[1]],[[4],[4],[2]],
        [[4],[4],[3]],[[4],[4],[1.4]],
        [[4],[4],[3.5]],[[4],[4],[4.5]],
        [[1.4],[1.4],[1]],[[1.4],[1.4],[2]],
        [[1.4],[1.4],[3]],[[1.4],[1.4],[4]],
        [[1.4],[1.4],[3.5]],[[1.4],[1.4],[4.5]],
        [[3.5],[3.5],[1]],[[3.5],[3.5],[2]],
        [[3.5],[3.5],[3]],[[3.5],[3.5],[4]],
        [[3.5],[3.5],[1.4]],[[3.5],[3.5],[4.5]],
        [[4.5],[4.5],[1]],[[4.5],[4.5],[2]],
        [[4.5],[4.5],[3]],[[4.5],[4.5],[4]],
        [[4.5],[4.5],[1.4]],[[4.5],[4.5],[3.5]]]
        a=0
        b=0
        c=0
        a2=0
        b2=0
        c2=0
        a3=0
        b3=0
        c3=0
        aaud=0
        baud=0
        caud=0
        a2aud=0
        b2aud=0
        c2aud=0
        a3aud=0
        b3aud=0
        c3aud=0
        ### _________________________
        #def shuffle_list_compare(List, lastLists):
        #    def shuffleCompare(l, lastCorrects):
        #        shuffle(l)
        #        diff = difFinder(l)
        #        while diff in lastCorrects:
        #            shuffle(l)
        #            diff = difFinder(l)
        #        print(diff, lastCorrects)
        #        return l
        #    ffinal = []
        #    for index, ii in enumerate(List):
        #        lastCorrects = []
        #        for i in lastLists:
        #            lastCorrects.append(difFinder(i[index]))
        #        shuffeled = shuffleCompare(ii, lastCorrects)
        #        ffinal.append(shuffeled)
        #    return ffinal

        def shuffle_list_compare(List, lastLists):
            def shuffleCompare(l, lastCorrects):
                shuffle(l)
                diff = difFinder(l)
                while diff in lastCorrects:
                    shuffle(l)
                    diff = difFinder(l)
                print(diff, lastCorrects)
                return l

            fffinal = []
            index = 0
            for ii in List:
                lastCorrects = []
                for i in lastLists:
                    lastCorrects.append(difFinder(i[index]))
                shuffeled = shuffleCompare(ii, lastCorrects)
                fffinal.append(shuffeled)
                index = index + 1
            return fffinal

        x = []
        for i in range(3):
            if i == 0:
                shuf = shuffle_list_compare(copy.deepcopy(total),x)
                x.append(shuf)
            else:
                shuf = shuffle_list_compare(copy.deepcopy(total), x)
                x.append(shuf)

        for i in x:
            shuffle(i)

        finalList = []
        for i in x:
            for ii in i:
                finalList.append(copy.deepcopy(ii))

        print(f'final list is {finalList}')
        for i in finalList:
          i.append('black')
        ran1 = randint(10,14)
        finalList.insert(ran1,[[2,2,4,1,3,1],[2,2,4,1,3,1],[2,2,4,3,1,1],'green'])
        ran1 = randint(22,26)
        finalList.insert(ran1,[[4,2,2,1,1,2,1],[4,2,2,1,1,2,1],[4,2,2,2,1,1,1],'green'])
        ####___________________________________
        list2=shuffle_list(copy.deepcopy(total2))
        for i in list2:
          i.append('black')
        ran2 = randint(8,12)
        list2.insert(ran2,[[1,1.4,1,1.4,3.5,3.5,1],[1,1.4,1,3.5,1.4,3.5,1],[1,1.4,1,1.4,3.5,3.5,1],'green'])
        ran2 = randint(18,22)
        list2.insert(ran2,[[3.5,1.4,1.4,3.5,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],[3.5,1.4,3.5,1.4,1,1,1],'green'])

        listSD=shuffle_list(copy.deepcopy(totalSD))
        for i in listSD:
          i.append('black')
        ran3 = randint(8,12)
        listSD.insert(ran3,[[4],[4],[3],'green'])
        ran3 = randint(18,22)
        listSD.insert(ran3,[[4.5],[4.5],[2],'green'])
        #list1aud=shuffle_list(copy.deepcopy(total))
        #list2aud=shuffle_list(copy.deepcopy(total2))
        #listSDaud=shuffle_list(copy.deepcopy(totalSD))
        pListVisReg=[#[[2,2,4,1,3,1],[2,2,4,3,1,1],[2,2,4,1,3,1],'black'],
        #[[3,1,4,1,3,1],[3,1,4,1,3,1],[3,1,4,3,1,1],'black'],
        [[2,1,1,3,1,1,3,1],[2,1,1,3,1,3,1,1],[2,1,1,3,1,1,3,1],'green']]
        #[[1,3,4,2,2,1],[3,1,4,2,2,1],[3,1,4,2,2,1],'black'],
        #[[2,1,1,2,2,3,1,1],[2,1,1,2,2,3,1,1],[2,1,1,2,2,1,3,1],'green'],
        #[[4,1,1,1,1,3,1,1],[4,1,1,1,1,3,1,1],[4,1,1,1,1,1,3,1],'black']]
        #pListVisReg = shuffle_list(copy.deepcopy(total))
        #pListVisIrreg = shuffle_list(copy.deepcopy(total2))
        pListVisIrreg = [[[1,1,3.5,4.5,3.5,1],[1,3.5,1,4.5,3.5,1],[1,1,3.5,4.5,3.5,1],'black'],
        [[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,1.4,4.5,1,1],[1.4,1.4,1,4.5,1.4,1,1],'green'],
        [[3.5,1.4,1.4,1,1,1,1.4,1],[3.5,1.4,1.4,1,1,1,1.4,1],[1.4,3.5,1.4,1,1,1,1.4,1],'black'],
        [[3.5,1,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],[1,3.5,1.4,4.5,1.4,1],'black'],
        [[1,3.5,1.4,3.5,1.4,1,1],[1,1.4,3.5,3.5,1.4,1,1],[1,3.5,1.4,3.5,1.4,1,1],'green'],
        [[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,3.5,1,1,1,1,1],[1.4,3.5,1,3.5,1,1,1,1],'black']]
        #pListVisSD = shuffle_list(copy.deepcopy(totalSD))
        pListVisSD = [[[1],[1],[3],'black'],
        [[2],[2],[1],'green'],
        [[3.5],[1.4],[3.5],'black'],
        [[4.5],[4.5],[3],'green'],
        [[2],[3.5],[3.5],'black'],
        [[2],[3.5],[2],'black']]
        #pListAudReg = shuffle_list(copy.deepcopy(total))
        #pListAudIrreg = shuffle_list(copy.deepcopy(total2))
        #pListAudSD = shuffle_list(copy.deepcopy(totalSD))
        intervall=len(finalList[a][b])
        intervall2=len(list2[a2][b2])
        #intervallaud=len(list1aud[aaud][baud])
        #intervall2aud=len(list2aud[a2aud][b2aud])
        #intervallvolset=len(total[avolset][bvolset])
        pIntervall = len(total[a][b])
        def rotation(intervall):
            rot5=[0,45,0,45,0,45]
            rot6=[0,45,0,45,0,45,0]
            rot7=[0,45,0,45,0,45,0,45]
            if intervall == 6:
                return rot5
            elif intervall == 7:
                return rot6
            elif intervall == 8:
                return rot7
            elif intervall == 1:
                return (0,0)
        def positionn(intervall):
            pos5=[(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0)]
            pos6=[(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0),(-5,0)]
            pos7=[(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0),(-5,0),(5,0)]
            if intervall == 6:
                return pos5
            elif intervall == 7:
                return pos6
            elif intervall == 8:
                return pos7


        def repetitionn(intervall):
            if intervall == 6:
                return 18
            elif intervall == 7:
                return 21
            elif intervall == 8:
                return 24

        def durationn(intervall,isAud=False): #write lists inside of function!
            if(isAud == False):
                start5=[1.5,0,0,0,0,0]
                start6=[1.5,0,0,0,0,0,0]
                start7=[1.5,0,0,0,0,0,0,0]
            else:
                start5=[1.5,0.05,0.05,0.05,0.05,0.05]
                start6=[1.5,0.05,0.05,0.05,0.05,0.05,0.05]
                start7=[1.5,0.05,0.05,0.05,0.05,0.05,0.05,0.05]

            if intervall == 6:
                return start5
            elif intervall == 7:
                return start6
            elif intervall == 8:
                return start7
        # controls speed
        def getRandomVis(sd = False):
            global visCounter1,visCounter2,visCounter3
            print(f"C1 : {visCounter1} , C2 : {visCounter2}, C3: {visCounter3}")
            r = randint(1,4)
            if sd == True:
                if r == 1:
                    if(visCounter1 < 12):
                        visCounter1 += 1
                        print(f"viscounter1 = {visCounter1}")
                        return r
                    else:
                        return getRandomVis()
                if r == 2:
                    if(visCounter2 < 12):
                        visCounter2 += 1
                        print(f"viscounter2 = {visCounter2}")
                        return r
                    else:
                        return getRandomVis()
                if r == 3:
                    if(visCounter3 < 12):
                        visCounter3 += 1
                        print(f"viscounter3 = {visCounter3}")
                        return r
                    else:
                        return getRandomVis()
            else:
                if r == 1:
                    if(visCounter1 < 12):
                        visCounter1 += 1
                        return r
                    else:
                        return getRandomVis()
                if r == 2:
                    if(visCounter2 < 12):
                        visCounter2 += 1
                        return r
                    else:
                        return getRandomVis()
                if r == 3:
                    if(visCounter3 < 12):
                        visCounter3 += 1
                        return r
                    else:
                        return getRandomVis()

        # ran=randint(1,3)
        def stop(List,a,b,c,isAud,ran):
            if ran==1:
                if(isAud):
                    return num1_to_sec(List[a][b][c],True)
                else:
                    return num1_to_sec(List[a][b][c])
            elif ran==2:
                if(isAud):
                    return num2_to_sec(List[a][b][c],True)
                else:
                    return num2_to_sec(List[a][b][c])
            elif ran==3:
                if(isAud):
                    return num3_to_sec(List[a][b][c],True)
                else:
                    return num3_to_sec(List[a][b][c])
        #    elif ran==4:
        #        if(isAud):
        #            return num4_to_sec(List[a][b][c],True)
        #        else:
        #            return num4_to_sec(List[a][b][c])
        #    elif ran==5:
        #        if(isAud):
        #            return num5_to_sec(List[a][b][c],True)
        #        else:
        #            return num5_to_sec(List[a][b][c])
        #    elif ran==6:
        #        if(isAud):
        #            return num6_to_sec(List[a][b][c],True)
        #        else:
        #            return num6_to_sec(List[a][b][c])

        # this code is related to the fixation cross in the middle of the screen
        cross = visual.ShapeStim(
            win=win, name='cross', vertices='cross',
            size=(0.05, 0.05),
            ori=0, pos=(0, 0),
            lineWidth=1, lineColor=[1,1,1], lineColorSpace='rgb',
            fillColor=[1,1,1], fillColorSpace='rgb',
            opacity=1, depth=-1.0, interpolate=True)

        counter=0
        L1=[0,0,0,0,0,0]
        L2=[0,0,0,0,0,0]
        L3=[0,0,0,0,0,0]
        L4=[0,0,0,1,0,0]
        L5=[0,0,0,0,0,0]
        L6=[0,0,0,0,0,0]
        order=[L1,L2,L3,L4,L5,L6]
        #shuffle(order)
      Begin JS Experiment:
        function num1_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.23 * n) - 0.05));
            }
            return Number.parseFloat((0.23 * n));
        }
        function num2_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.25 * n) - 0.05));
            }
            return Number.parseFloat((0.25 * n));
        }
        function num3_to_sec(n, isaud = false) {
            if ((isaud === true)) {
                return Number.parseFloat(((0.27 * n) - 0.05));
            }
            return Number.parseFloat((0.27 * n));
        }
        function shuffle_list(List) {
            var counta, countb, countc, d;
            counta = 0;
            countb = 0;
            countc = 0;
            for (var ii, _pj_c = 0, _pj_a = List, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                ii = _pj_a[_pj_c];
                shuffle(ii);
                d = difFinder(ii);
                if ((d === 1)) {
                    counta += 1;
                } else {
                    if ((d === 2)) {
                        countb += 1;
                    } else {
                        if ((d === 3)) {
                            countc += 1;
                        }
                    }
                }
            }
            if (((counta === countb) && (counta === countc))) {
                shuffle(List);
                return List;
            } else {
                return shuffle_list(List);
            }
        }
        //difFinder=function(i) {
        //    function arrays_equal(a, b) { return !!a && !!b && !(a < b || b < a); }
        //    if (!arrays_equal(i[0], i[1]) && !arrays_equal(i[0], i[2])) {
        //        return 1;
        //    }
        //    if (!arrays_equal(i[0], i[1]) && !arrays_equal(i[1], i[2])) {
        //        return 2;
        //    }
        //    if (!arrays_equal(i[0], i[2]) && !arrays_equal(i[1], i[2])) {
        //        return 3;
        //    }
        //}

        total = [[[4, 1, 3, 3, 1, 1], [4, 1, 3, 3, 1, 1], [4, 3, 1, 3, 1, 1]], [[4, 3, 1, 2, 2, 1], [4, 3, 1, 2, 2, 1], [4, 1, 3, 2, 2, 1]], [[1, 1, 2, 3, 1, 4, 1], [1, 1, 2, 3, 1, 4, 1], [1, 1, 2, 1, 3, 4, 1]],[[2, 2, 3, 1, 1, 3, 1], [2, 2, 3, 1, 1, 3, 1], [2, 2, 3, 1, 3, 1, 1]],[[2, 1, 1, 2, 2, 4, 1], [2, 1, 1, 2, 2, 4, 1], [1, 1, 2, 2, 2, 4, 1]],[[2, 2, 1, 3, 3, 1, 1], [2, 2, 1, 3, 3, 1, 1], [2, 2, 1, 3, 1, 3, 1]],[[4, 1, 1, 2, 3, 1, 1], [4, 1, 1, 2, 3, 1, 1], [4, 1, 1, 2, 1, 3, 1]],[[2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 3, 1, 1]], [[4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 3, 1, 1], [4, 1, 1, 1, 1, 1, 3, 1]], [[4, 2, 2, 1, 1, 1, 1, 1], [4, 2, 2, 1, 1, 1, 1, 1], [4, 2, 1, 1, 2, 1, 1, 1]],[[1, 1, 2, 3, 1, 1, 3, 1], [1, 1, 2, 3, 1, 1, 3, 1], [1, 1, 2, 3, 1, 3, 1, 1]], [[2, 2, 1, 1, 1, 1, 4, 1], [2, 2, 1, 1, 1, 1, 4, 1], [2, 1, 1, 2, 1, 1, 4, 1]]];
        total2 = [[[1, 1, 3.5, 4.5, 3.5, 1], [1, 1, 3.5, 4.5, 3.5, 1], [1, 3.5, 1, 4.5, 3.5, 1]], [[1, 3.5, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], [3.5, 1, 1.4, 4.5, 1.4, 1]], [[1.4, 3.5, 1.4, 4.5, 1, 1], [1.4, 3.5, 1.4, 4.5, 1, 1], [1.4, 3.5, 1.4, 1, 4.5, 1]], [[3.5, 3.5, 1, 4.5, 1, 1], [3.5, 3.5, 1, 4.5, 1, 1], [3.5, 3.5, 4.5, 1, 1, 1]], [[4.5, 1, 1, 3.5, 3.5, 1], [4.5, 1, 1, 3.5, 3.5, 1], [1, 4.5, 1, 3.5, 3.5, 1]], [[4.5, 1, 1.4, 3.5, 1.4, 1], [4.5, 1, 1.4, 3.5, 1.4, 1], [1, 4.5, 1.4, 3.5, 1.4, 1]], [[1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 1.4, 3.5, 3.5, 1.4, 1, 1]], [[1.4, 1, 4.5, 1.4, 1.4, 1, 1], [1.4, 1, 4.5, 1.4, 1.4, 1, 1], [1.4, 4.5, 1, 1.4, 1.4, 1, 1]], [[1.4, 1, 4.5, 3.5, 1, 1, 1], [1.4, 1, 4.5, 3.5, 1, 1, 1], [1.4, 4.5, 1, 3.5, 1, 1, 1]], [[3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 1.4, 3.5, 1, 1, 1]], [[4.5, 1, 1.4, 1.4, 1, 1.4, 1], [4.5, 1, 1.4, 1.4, 1, 1.4, 1], [1, 4.5, 1.4, 1.4, 1, 1.4, 1]], [[4.5, 1.4, 1, 3.5, 1, 1, 1], [4.5, 1.4, 1, 3.5, 1, 1, 1], [4.5, 1.4, 1, 1, 3.5, 1, 1]], [[1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 3.5, 1.4, 3.5, 1]], [[1, 1.4, 1.4, 1, 4.5, 1.4, 1], [1, 1.4, 1.4, 1, 4.5, 1.4, 1], [1, 1.4, 1.4, 4.5, 1, 1.4, 1]], [[1, 1.4, 4.5, 1, 1, 3.5, 1], [1, 1.4, 4.5, 1, 1, 3.5, 1], [1, 1.4, 4.5, 1, 3.5, 1, 1]], [[1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 4.5, 1.4, 1, 1]], [[1.4, 3.5, 1, 1, 1.4, 3.5, 1], [1.4, 3.5, 1, 1, 1.4, 3.5, 1], [1.4, 3.5, 1, 1, 3.5, 1.4, 1]], [[3.5, 1.4, 1, 4.5, 1, 1, 1], [3.5, 1.4, 1, 4.5, 1, 1, 1], [3.5, 1.4, 1, 1, 4.5, 1, 1]], [[1, 1, 1, 1.4, 4.5, 1, 1.4, 1], [1, 1, 1, 1.4, 4.5, 1, 1.4, 1], [1, 1, 1, 4.5, 1.4, 1, 1.4, 1]], [[1, 1, 3.5, 1.4, 1, 3.5, 1, 1], [1, 1, 3.5, 1.4, 1, 3.5, 1, 1], [1, 1, 3.5, 1.4, 3.5, 1, 1, 1]], [[1, 1, 3.5, 1.4, 1.4, 1, 1.4, 1], [1, 1, 3.5, 1.4, 1.4, 1, 1.4, 1], [1, 1, 1.4, 3.5, 1.4, 1, 1.4, 1]], [[1.4, 1, 4.5, 1, 1.4, 1, 1, 1], [1.4, 1, 4.5, 1, 1.4, 1, 1, 1], [1.4, 4.5, 1, 1, 1.4, 1, 1, 1]], [[1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 1, 3.5, 1, 1, 1, 1]], [[3.5, 1, 1, 3.5, 1, 1.4, 1, 1], [3.5, 1, 1, 3.5, 1, 1.4, 1, 1], [3.5, 1, 1, 1, 3.5, 1.4, 1, 1]], [[1, 3.5, 1, 4.5, 1, 1, 1, 1], [1, 3.5, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 4.5, 1, 1, 1, 1]], [[1, 4.5, 1, 1, 3.5, 1, 1, 1], [1, 4.5, 1, 1, 3.5, 1, 1, 1], [1, 4.5, 1, 1, 1, 3.5, 1, 1]], [[1.4, 1, 1.4, 3.5, 1.4, 1, 1, 1], [1.4, 1, 1.4, 3.5, 1.4, 1, 1, 1], [1.4, 1, 1.4, 1.4, 3.5, 1, 1, 1]], [[3.5, 1, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 4.5, 1, 1, 1, 1], [3.5, 1, 1, 1, 4.5, 1, 1, 1]], [[3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [1.4, 3.5, 1.4, 1, 1, 1, 1.4, 1]], [[4.5, 1, 1, 1, 1.4, 1.4, 1, 1], [4.5, 1, 1, 1, 1.4, 1.4, 1, 1], [1, 4.5, 1, 1, 1.4, 1.4, 1, 1]]];
        totalSD = [[[1], [1], [2]], [[1], [1], [3]], [[1], [1], [4]], [[1], [1], [1.4]], [[1], [1], [3.5]], [[1], [1], [4.5]], [[2], [2], [1]], [[2], [2], [3]], [[2], [2], [4]], [[2], [2], [1.4]], [[2], [2], [3.5]], [[2], [2], [4.5]], [[3], [3], [1]], [[3], [3], [2]], [[3], [3], [4]], [[3], [3], [1.4]], [[3], [3], [3.5]], [[3], [3], [4.5]], [[4], [4], [1]], [[4], [4], [2]], [[4], [4], [3]], [[4], [4], [1.4]], [[4], [4], [3.5]], [[4], [4], [4.5]], [[1.4], [1.4], [1]], [[1.4], [1.4], [2]], [[1.4], [1.4], [3]], [[1.4], [1.4], [4]], [[1.4], [1.4], [3.5]], [[1.4], [1.4], [4.5]], [[3.5], [3.5], [1]], [[3.5], [3.5], [2]], [[3.5], [3.5], [3]], [[3.5], [3.5], [4]], [[3.5], [3.5], [1.4]], [[3.5], [3.5], [4.5]], [[4.5], [4.5], [1]], [[4.5], [4.5], [2]], [[4.5], [4.5], [3]], [[4.5], [4.5], [4]], [[4.5], [4.5], [1.4]], [[4.5], [4.5], [3.5]]];
        a = 0;
        b = 0;
        c = 0;
        a2 = 0;
        b2 = 0;
        c2 = 0;
        a3 = 0;
        b3 = 0;
        c3 = 0;
        aaud = 0;
        baud = 0;
        caud = 0;
        a2aud = 0;
        b2aud = 0;
        c2aud = 0;
        a3aud = 0;
        b3aud = 0;
        c3aud = 0;
        difFinder = function (i) {
            if ((JSON.stringify(i[0]) !== JSON.stringify(i[1])) && (JSON.stringify(i[0]) !== JSON.stringify(i[2]))) {
                return 1;
            }
            if ((JSON.stringify(i[1]) !== JSON.stringify(i[0])) && (JSON.stringify(i[1]) !== JSON.stringify(i[2]))) {
                return 2;
            }
            if ((JSON.stringify(i[2]) !== JSON.stringify(i[0])) && (JSON.stringify(i[2]) !== JSON.stringify(i[1]))) {
                return 3;
            }
        }
        function shuffle_list_compare(List, lastLists) {
            var fffinal, lastCorrects, shuffeled;
            function shuffleCompare(l, lastCorrects) {
                var diff;
                util.shuffle(l);
                diff = difFinder(l);
                while (lastCorrects.includes(diff)) {
                    util.shuffle(l);
                    diff = difFinder(l);
                }
                console.log(diff, lastCorrects);
                return l;
            }
            fffinal = [];
            List.forEach((ii, index) => {
                lastCorrects = [];
                lastLists.forEach(i => {
                    lastCorrects.push(difFinder(i[index]))
                })
                shuffeled = shuffleCompare(ii, lastCorrects);
                fffinal.push(shuffeled);
            })
            return fffinal;
        }
        x = [];
        for (i = 0; i < 3; i++) {
            var shuf = shuffle_list_compare(JSON.parse(JSON.stringify(total)), x)
            x.push(shuf)
        }
        console.log(JSON.stringify(x));
        x.map(i => {
            util.shuffle(i);
        })
        finalList = [];
        x.forEach(i => {
            i.forEach(ii => {
                finalList.push(ii)
            })
        })
        //console.log(JSON.stringify(finalList));
        for (var i, _pj_c = 0, _pj_a = finalList, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.push("black");
        }
        ran1 = util.randint(10, 14);
        finalList.insert(ran1, [[2, 2, 4, 1, 3, 1], [2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1], "green"]);
        ran1 = util.randint(22, 26);
        finalList.insert(ran1, [[4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 2, 1, 1, 1], "green"]);
        // --------------------------------------
        //for (var i, _pj_c = 0, _pj_a = list1, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
        //    i = _pj_a[_pj_c];
        //    i.append("black");
        //}
        list1 = shuffle_list(JSON.parse(JSON.stringify(total)));
        ran1 = randint(5, 9);
        list1.insert(ran1, [[2, 2, 4, 1, 3, 1], [2, 2, 4, 1, 3, 1], [2, 2, 4, 3, 1, 1], "green"]);
        ran1 = randint(15, 19);
        list1.insert(ran1, [[4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 1, 1, 2, 1], [4, 2, 2, 2, 1, 1, 1], "green"]);
        list2 = shuffle_list(JSON.parse(JSON.stringify(total2)));
        for (var i, _pj_c = 0, _pj_a = list2, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran2 = randint(8, 12);
        list2.insert(ran2, [[1, 1.4, 1, 1.4, 3.5, 3.5, 1], [1, 1.4, 1, 3.5, 1.4, 3.5, 1], [1, 1.4, 1, 1.4, 3.5, 3.5, 1], "green"]);
        ran2 = randint(18, 22);
        list2.insert(ran2, [[3.5, 1.4, 1.4, 3.5, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], [3.5, 1.4, 3.5, 1.4, 1, 1, 1], "green"]);
        listSD = shuffle_list(JSON.parse(JSON.stringify(totalSD)));
        for (var i, _pj_c = 0, _pj_a = listSD, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            i.append("black");
        }
        ran3 = randint(8, 12);
        listSD.insert(ran3, [[4], [4], [3], "green"]);
        ran3 = randint(18, 22);
        listSD.insert(ran3, [[4.5], [4.5], [2], "green"]);
        pListVisReg = [[[2, 1, 1, 3, 1, 1, 3, 1], [2, 1, 1, 3, 1, 3, 1, 1], [2, 1, 1, 3, 1, 1, 3, 1], "green"]];
        pListVisIrreg = [[[1, 1, 3.5, 4.5, 3.5, 1], [1, 3.5, 1, 4.5, 3.5, 1], [1, 1, 3.5, 4.5, 3.5, 1], "black"], [[1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 1.4, 4.5, 1, 1], [1.4, 1.4, 1, 4.5, 1.4, 1, 1], "green"], [[3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [3.5, 1.4, 1.4, 1, 1, 1, 1.4, 1], [1.4, 3.5, 1.4, 1, 1, 1, 1.4, 1], "black"], [[3.5, 1, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], [1, 3.5, 1.4, 4.5, 1.4, 1], "black"], [[1, 3.5, 1.4, 3.5, 1.4, 1, 1], [1, 1.4, 3.5, 3.5, 1.4, 1, 1], [1, 3.5, 1.4, 3.5, 1.4, 1, 1], "green"], [[1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 3.5, 1, 1, 1, 1, 1], [1.4, 3.5, 1, 3.5, 1, 1, 1, 1], "black"]];
        pListVisSD = [[[1], [1], [3], "black"], [[2], [2], [1], "green"], [[3.5], [1.4], [3.5], "black"], [[4.5], [4.5], [3], "green"], [[2], [3.5], [3.5], "black"], [[2], [3.5], [2], "black"]];
        intervall = list1[a][b].length;
        intervall2 = list2[a2][b2].length;
        pIntervall = total[a][b].length;

        rotation=function(intervall) {
            var rot5, rot6, rot7;
            rot5 = [0, 45, 0, 45, 0, 45];
            rot6 = [0, 45, 0, 45, 0, 45, 0];
            rot7 = [0, 45, 0, 45, 0, 45, 0, 45];
            if ((intervall === 6)) {
                return rot5;
            } else {
                if ((intervall === 7)) {
                    return rot6;
                } else {
                    if ((intervall === 8)) {
                        return rot7;
                    } else {
                        if ((intervall === 1)) {
                            return [0, 0];
                        }
                    }
                }
            }
        }

        positionn=function(intervall) {
            var pos5, pos6, pos7;
            pos5 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0]];
            pos6 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0]];
            pos7 = [[(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0], [(- 5), 0], [5, 0]];
            if ((intervall === 6)) {
                return pos5;
            } else {
                if ((intervall === 7)) {
                    return pos6;
                } else {
                    if ((intervall === 8)) {
                        return pos7;
                    }
                }
            }
        }
        repetitionn=function(intervall) {
            if ((intervall === 6)) {
                return 18;
            } else {
                if ((intervall === 7)) {
                    return 21;
                } else {
                    if ((intervall === 8)) {
                        return 24;
                    }
                }
            }
        }
        durationn=function(intervall, isAud = false) {
            var start5, start6, start7;
            if ((isAud === false)) {
                start5 = [1.5, 0, 0, 0, 0, 0];
                start6 = [1.5, 0, 0, 0, 0, 0, 0];
                start7 = [1.5, 0, 0, 0, 0, 0, 0, 0];
            } else {
                start5 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05];
                start6 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05];
                start7 = [1.5, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05, 0.05];
            }
            if ((intervall === 6)) {
                return start5;
            } else {
                if ((intervall === 7)) {
                    return start6;
                } else {
                    if ((intervall === 8)) {
                        return start7;
                    }
                }
            }
        }
        getRandomVis = function(sd = false) {
            var r;
            console.log(`C1 : ${visCounter1} , C2 : ${visCounter2}, C3: ${visCounter3}`);
            r = randint(1, 4);
            if ((sd === true)) {
                if ((r === 1)) {
                    if ((visCounter1 < 12)) {
                        visCounter1 += 1;
                        console.log(`viscounter1 = ${visCounter1}`);
                        return r;
                    } else {
                        return getRandomVis();
                    }
                }
                if ((r === 2)) {
                    if ((visCounter2 < 12)) {
                        visCounter2 += 1;
                        console.log(`viscounter2 = ${visCounter2}`);
                        return r;
                    } else {
                        return getRandomVis();
                    }
                }
                if ((r === 3)) {
                    if ((visCounter3 < 12)) {
                        visCounter3 += 1;
                        console.log(`viscounter3 = ${visCounter3}`);
                        return r;
                    } else {
                        return getRandomVis();
                    }
                }
            } else {
                if ((r === 1)) {
                    if ((visCounter1 < 12)) {
                        visCounter1 += 1;
                        return r;
                    } else {
                        return getRandomVis();
                    }
                }
                if ((r === 2)) {
                    if ((visCounter2 < 12)) {
                        visCounter2 += 1;
                        return r;
                    } else {
                        return getRandomVis();
                    }
                }
                if ((r === 3)) {
                    if ((visCounter3 < 12)) {
                        visCounter3 += 1;
                        return r;
                    } else {
                        return getRandomVis();
                    }
                }
            }
        }


        ran = randint(1, 3);
        stop=function(List, a, b, c, isAud, ran) {
            if ((ran === 1)) {
                if (isAud) {
                    return num1_to_sec(List[a][b][c], true);
                } else {
                    return num1_to_sec(List[a][b][c]);
                }
            } else {
                if ((ran === 2)) {
                    if (isAud) {
                        return num2_to_sec(List[a][b][c], true);
                    } else {
                        return num2_to_sec(List[a][b][c]);
                    }
                } else {
                    if ((ran === 3)) {
                        if (isAud) {
                            return num3_to_sec(List[a][b][c], true);
                        } else {
                            return num3_to_sec(List[a][b][c]);
                        }
                    }
                }
            }
        }
        cross = new visual.ShapeStim({"win": win, "name": "cross", "vertices": "cross", "size": [0.05, 0.05], "ori": 0, "pos": [0, 0], "lineWidth": 1, "lineColor": [1, 1, 1], "lineColorSpace": "rgb", "fillColor": [1, 1, 1], "fillColorSpace": "rgb", "opacity": 1, "depth": (- 1.0), "interpolate": true});
        counter = 0;
        L1 = [0, 0, 0, 0, 0, 0];
        L2 = [0, 0, 0, 0, 0, 0];
        L3 = [0, 0, 0, 0, 0, 0];
        L4 = [0, 0, 0, 1, 0, 0];
        L5 = [0, 0, 0, 0, 0, 0];
        L6 = [0, 0, 0, 0, 0, 0];
        order = [L1, L2, L3, L4, L5, L6];
        shuffle(order);
  Routine main_intro
    TextComponent text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
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      text:
        Thank you for doing your daily practice. During this session, we will present you with three visual sequences in each trial and ask you to identify the one that is different.
        This session consists of one visual block, and will take approximately 10 minutes.

        You are expected to practice this experiment for a total of 10 days. It is highly recommended to set up a daily reminder for yourself to ensure that you don't miss any of the 10 practice days. Remember that you cannot complete the post-test experiment unless the 10 sessions are completed.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sizeset
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Size Setting

        You will see a credit card on the screen.  Please take a moment to resize the image you see to match the dimensions of a credit card using the arrow keys on your keyboard.  This process is to ensure dimensional accuracy throughout the visual trials and account for computer screens with varying dimensions.

        Press on the “space bar” to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine screenScale
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys and t > 1:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            #text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            image.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Resize this image to match the size of a credit card
        Up arrow for taller
        Down arrow for shorter
        Left arrow for narrower
        Right arrow for wider
    TextComponent text_4
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Press the "space bar" when done
      wrapWidth = 1.5
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    ImageComponent image
      image = bank-1300155_640.png
      pos = (0, -0.05)
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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  Routine visprep
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        introText = """Visual Sequence

        You will see three sequences of rotating squares on the screen. The timing pattern of one of these sequences is different from the other two.

        After seeing all three sequences, you will be asked which sequence was different from the other two by pressing 1, 2, or 3 on the keyboard.

        Notice that the answers you provide will be reviewed and analyzed. Please remain focused and attentive while providing your answers.

        Press on the “space bar” to continue."""
        pIntroText = """During the experiment whenever you see green squares on the screen, like the one in the next trial, make sure to press on the “G” key instead of 1,2, or 3 regardless of what the question prompt says.

        Press on the “space bar” to continue."""
        visCounter1 = 0
        visCounter2 = 0
        visCounter3 = 0

        isPractice = True
        intro_text = ""
        mainInterval = None
        showIntro = True
        mainList = None
        listUpdated = False
        regVisPracReps = 1
        regVisReps = 36

        ran = randint(1,4)
  Routine pcode
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if(isPractice == True):
            intro_text = pIntroText
            mainList = pListVisReg
            mainInterval = len(pListVisReg[a][b])
            if mainList[a][3]=='green':
                visregACintro = 1
            else:
                visregACintro = 0
        else:
            intro_text = introText
            if listUpdated == False:
                mainList = finalList
                listUpdated = True
            mainInterval = len(finalList[a][b])
  Routine visregACintro
  Routine introVisReg
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if showIntro != True:
            continueRoutine = False
      End Routine:
        showIntro = False
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every frame] = $intro_text
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RegVis
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # cross.setAutoDraw(True) #this is for starting the fixation cross
        #if mainList[a][3]=='black':
        #    allowedkeys=['1','2','3']
        #else:
        #    allowedkeys=[]
        #
    PolygonComponent polygon
      fillColor [set every repeat] = $mainList[a][3]
      lineColor [set every repeat] = $mainList[a][3]
      ori [set every repeat] = rotation(mainInterval)[c]
      shape = rectangle
      size [set every repeat] = (3*x_scale, 3*y_scale)
      startVal [time (s)] = $durationn(mainInterval)[c]
      stopVal [duration (s)] = $stop(mainList,a,b,c,False,ran)
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  Routine codeSeqVis
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            trials.addData('Pr_SEQvis1',mainList[a][b][c])
            trials.addData('Pr_NumberOfIntervals',mainList[a][b])
            trials.addData('Pr_SEQvis3',stop(mainList,a,b,c,False,ran))
            trials.addData('Pr_Speed',ran)
            trials.addData('Pr_Pattern',mainInterval-1)
            trials.addData('Pr_Diff',difFinder(mainList[a]))
            trials.addData('Pr_Color',mainList[a][3])
        else:
            trials.addData('SEQvis1',mainList[a][b][c])
            trials.addData('NumberOfIntervals',mainList[a][b])
            trials.addData('SEQvis3',stop(mainList,a,b,c,False,ran))
            trials.addData('Speed',ran)
            trials.addData('Pattern',mainInterval-1)
            trials.addData('Diff',difFinder(mainList[a]))
            trials.addData('Color',mainList[a][3])
      End Routine:
        if isPractice == False:
            if c<mainInterval-1:
                c+=1
            else:
                c=0
                if b<2:
                    b+=1
                else:
                    b=0
                    if a<37:
                        a+=1
                        if mainList[a][3] == "green":
                            ran=randint(1,4)
                            print(ran,"Attention Check")
                        else:
                            ran=getRandomVis()
        else:
            if c<mainInterval-1:
                c+=1
        #        stop(mainList,a,b,c,False,ran)
            else:
                c=0
                if b<2:
                    b+=1
        #            stop(mainList,a,b,c,False,ran)
                else:
                    b=0
                    if a<25:
                        a+=1
                        ran=randint(1,4)
                        print(ran,"Practice")
        #                stop(mainList,a,b,c,False,ran)
        #                mainInterval=len(mainList[a][b])

        #if mainList[a][3]=='black':
        #    allowedkeys=['1','2','3']
        ##    print(mainList[a][3])
        #else:
        #    allowedkeys=[]
        #
  Routine quesPracVisReg
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == False:
            continueRoutine = False

        cross.setAutoDraw(False) #this is for ending the fixation cross
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine questionvis
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if isPractice == True:
            continueRoutine = False

        cross.setAutoDraw(False) #this is for ending the fixation cross
      End Routine:
        if a > regVisPracReps - 1 and isPractice == True:
            a = 0
            b = 0
            c = 0
            isPractice = False
            print('isPractice is false now')
            showIntro = True
            ran = getRandomVis()
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Which one was different?

        First presentation  >  Key "1"
        Second presentation  >  Key "2"
        Third presentation  >  Key "3"

        If you are not sure, please guess.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = '1','2','3','g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine end
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have finished your practice session.

        Please do not close the browser. Press on the “space bar” to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine code_js
  Routine code_2
  Routine main_intro
  Routine sizeset
  Routine screenScale
  Routine visprep
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = regVisPracReps + regVisReps+2
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    Routine pcode
    Routine introVisReg
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = repetitionn(mainInterval)
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      Routine RegVis
      Routine codeSeqVis
    LoopTerminator trials
    Routine quesPracVisReg
    Routine questionvis
  LoopTerminator trials_2
  Routine end
